PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [720, 480]
  expName = Arduino_check
  keyboardBackend = ioHub
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Routines
  Routine Check_arduino
    CodeComponent init_arduino
      Code Type = Py
      Before Experiment:
        import serial
        import time

        ser = serial.Serial("COM3", 9600)
      End Experiment:
        ser.close()
    CodeComponent check_led_l
      Code Type = Py
      Begin Routine:
        ser.write(b"1")
        time.sleep(3)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = LED-1_ON
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    CodeComponent check_led_r
      Code Type = Py
      Begin Routine:
        ser.write(b"2")
        time.sleep(3)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      text = LED-2_ON
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent check_beep
      Code Type = Py
      disabled = True
      Begin Routine:
        ser.write(b"3")
        time.sleep(2)

        ser.write(b"4")
        time.sleep(2)
  Routine Check_Talk
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Nikolaが話せるかチェックします
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    CodeComponent init_var
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        json_idleoff = json.dumps(compoff_true)
        json_idleon = json.dumps(compoff_false)

        message_idleoff = roslibpy.Message({'data': json_idleoff})
        message_idleon = roslibpy.Message({'data': json_idleon})
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent init_talk
      Code Type = Py
      Begin Experiment:
        # Volume
        Master_Volume = 1.3

        json_data_test = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "テストです。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_test = json.dumps(json_data_test)
        message_test = roslibpy.Message({'data': json_test})
    CodeComponent t_go_demo
      Code Type = Py
      Begin Routine:
        # talk ikimasu
        tts_topic.publish(message_test)
        time.sleep(1.5)
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Check_Move
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Nikolaの目と顔動くかチェックします
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    CodeComponent init_cmd
      Code Type = Py
      Before Experiment:
        # HEAD
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd0_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd1_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd_gaze = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.1,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        # EYE
        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd0_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd1_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        # FACS
        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
    CodeComponent check_head
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_2.encode("utf-8"))
        time.sleep(1.5)

        client1.send(head_cmd0_2.encode("utf-8"))
        time.sleep(1.5)

        client1.send(head_cmd1_2.encode("utf-8"))
        time.sleep(1.5)
    CodeComponent check_eye
      Code Type = Py
      Begin Routine:
        client1.send(eye_cmd1_2.encode("utf-8"))
        time.sleep(1.5)

        client1.send(eye_cmd0_2.encode("utf-8"))
        time.sleep(1.5)

        client1.send(eye_cmd1_2.encode("utf-8"))
        time.sleep(1.5)
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Check_face
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Nikolaの目と顔動くかチェックします
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    CodeComponent init_stim
      Code Type = Py
      Before Experiment:
        stim_exp = ["facs InnerBrow 0 Outerbrow 0 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0 UpperLip 0 LipCorner 0 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.0 UpperLid -0.7 LowerLid 0 Cheek 0 NoseWrinkler 0.0 UpperLip 0 LipCorner -0.9 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.0 UpperLid -0.8 LowerLid 0 Cheek 0 NoseWrinkler 0.0 UpperLip 0 LipCorner -0.9 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.5 UpperLid 0.2 LowerLid 1 Cheek 1.0 NoseWrinkler 0 UpperLip 0 LipCorner 0.5 MouthCornerStickout 0.5 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.5 UpperLid 0.3 LowerLid 1 Cheek 1.0 NoseWrinkler 0 UpperLip 0 LipCorner 0.5 MouthCornerStickout 0.5 MouthOpen 0 JawDrop 0\n"]
    CodeComponent check_face
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Check_face_2
    CodeComponent code
      Code Type = Py
      Before Experiment:
        num_03 = expression

        cmd = stim_exp[num_03]
        time.sleep(1)

        client2.send(cmd.encode("utf-8"))
        time.sleep(1)
  Routine Fin
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        終了です

        「Enterキー」を押して終了してください
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Check_arduino
  Routine Check_Talk
  Routine Check_Move
  Routine Check_face
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = xlsx/exercise.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': 1, 'prosody': 1, 'expression': 1},
      {'text': 2, 'prosody': 2, 'expression': 2},
      {'text': 3, 'prosody': 3, 'expression': 3},
      {'text': 4, 'prosody': 4, 'expression': 4},
      {'text': 0, 'prosody': 0, 'expression': 0}]
    Routine Check_face_2
  LoopTerminator trials
  Routine Fin
