PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [720, 480]
  expName = Arduino_check
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent init_arduino
      Code Type = Py
      Before Experiment:
        import serial
        import time

        ser = serial.Serial("COM3", 9600)
      End Experiment:
        ser.close()
    CodeComponent check_led
      Code Type = Py
      Begin Routine:
        ser.write(b"1")
        time.sleep(3)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = LED-1_ON
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        ser.write(b"2")
        time.sleep(3)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = LED-2_ON
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent check_beep
      Code Type = Py
      Begin Routine:
        ser.write(b"3")
        time.sleep(2)

        ser.write(b"4")
        time.sleep(2)
Flow
  Routine trial
