PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['subj'], '1-Multi', expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'subj': '001', 'cndFileName': "['xlsx/ResumeMulti_1.xlsx', 'xlsx/ResumeMulti_2.xlsx',  'xlsx/ResumeMulti_3.xlsx', 'xlsx/ResumeMulti_4.xlsx', 'xlsx/ResumeMulti_5.xlsx']"}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [720, 480]
  expName = Resume Gaze
  keyboardBackend = ioHub
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Routines
  Routine Check_v
    TextComponent check_v_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 感情価の値を1~9のボタンで評価してください
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    KeyboardComponent valence
      allowedKeys = '1','2','3','4','5','6','7','8','9', 'escape', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Counter
    CodeComponent break_counter
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
        nRestTrial = 29 # 28回目で休憩をはさむ
      Begin Routine:
        if trialCounter % nRestTrial == 0:
            isRest = 1
        else:
            isRest = 0

        test_start.setText(trialCounter)
        trialCounter = trialCounter + 1
    TextComponent test_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Routine
    TextComponent countd_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every frame] = $str(300-int(t))
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    TextComponent recess
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        「Enterキー」を押して再開します。
        (途中で「Enterキー」を押した場合
         タイマーを待たずに開始します。)
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Init
    TextComponent init_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        実験プログラムを起動しています
        暫くお待ちください
    CodeComponent init_var
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        json_idleoff = json.dumps(compoff_true)
        json_idleon = json.dumps(compoff_false)

        message_idleoff = roslibpy.Message({'data': json_idleoff})
        message_idleon = roslibpy.Message({'data': json_idleon})
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent init_cmd
      Code Type = Py
      Before Experiment:
        # HEAD
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd0_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd1_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd_gaze = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.1,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        # EYE
        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd0_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd1_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        # FACS
        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
    CodeComponent init_talk
      Code Type = Py
      Begin Experiment:
        # Volume
        Master_Volume = 1.3

        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_ikimasu = json.dumps(json_data_ikimasu)
        message_ikimasu = roslibpy.Message({'data': json_ikimasu})
    CodeComponent init_arduino
      Code Type = Py
      Before Experiment:
        import serial

        ser = serial.Serial("COM3", 9600)
      End Experiment:
        ser.close()
    CodeComponent init_stim
      Code Type = Py
      Before Experiment:
        stim_txt = ["ぼくはふつう", "ぼくはかなしい", "ぼくはつらい", "ぼくはうれしい", "ぼくはたのしい"]
        stim_exp = ["facs InnerBrow 0 Outerbrow 0 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0 UpperLip 0 LipCorner 0 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.0 UpperLid -0.7 LowerLid 0 Cheek 0 NoseWrinkler 0.0 UpperLip 0 LipCorner -0.9 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.0 UpperLid -0.8 LowerLid 0 Cheek 0 NoseWrinkler 0.0 UpperLip 0 LipCorner -0.9 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.5 UpperLid 0.2 LowerLid 1 Cheek 1.0 NoseWrinkler 0 UpperLip 0 LipCorner 0.5 MouthCornerStickout 0.5 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow 1.0 Outerbrow 0.5 UpperLid 0.3 LowerLid 1 Cheek 1.0 NoseWrinkler 0 UpperLip 0 LipCorner 0.5 MouthCornerStickout 0.5 MouthOpen 0 JawDrop 0\n"]
  Routine Idleoff
    CodeComponent idle_off
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
  Routine Idleon
    CodeComponent start_idle_2
      Code Type = Py
      Begin Routine:
        dib_topic.publish(message_idleon)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)
  Routine Demo_stim
    CodeComponent stim_demo
      Code Type = Py
      Begin Routine:
        num_01 = text
        num_02 = prosody
        num_03 = expression

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.6}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.7}
        }
        json_data_4 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.6, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_5 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.7, "Angry": 0.0, "Sad": 0.0}
        }

        if num_02 == 1:
            json_string = json.dumps(json_data_2)
        elif num_02 == 2:
            json_string = json.dumps(json_data_3)
        elif num_02 == 3:
            json_string = json.dumps(json_data_4)
        elif num_02 == 4:
            json_string = json.dumps(json_data_5)
        elif num_02 == 0:
            json_string = json.dumps(json_data_1)
        # Send messages
        message = roslibpy.Message({'data': json_string})

        cmd = stim_exp[num_03]
        time.sleep(1)

        def talk_play():
            tts_topic.publish(message)

        def face_play():
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # make thread
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # start thread
        thread1.start()
        thread2.start()
        thread3.start()

        # wait thread
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent _stim_demo
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_2.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)
  Routine Demo_init
    CodeComponent p_start_demo
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_2.encode("utf-8"))
        time.sleep(1.5)
    CodeComponent t_go_demo
      Code Type = Py
      Begin Routine:
        # talk ikimasu
        tts_topic.publish(message_ikimasu)
        time.sleep(1.5)

        # prepar next demo
        json_data_5 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "ぼくはたのしい",
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.7, "Angry": 0.0, "Sad": 0.0}
        }

        time.sleep(1)
  Routine Check_h
    TextComponent check_h_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ヒトらしさの値を1~9のボタンで評価してください。
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    KeyboardComponent humanness
      allowedKeys = '1','2','3','4','5','6','7','8','9', 'escape', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Check_beep
    CodeComponent check_beep
      Code Type = Py
      Begin Routine:
        ser.write(b"5")
        time.sleep(0.5)
  Routine Demo_Eyecatch
    TextComponent demo_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        最初にデモとしてNikolaが
        連続で23パターン表現します
        どのような表現をするか確認してください
  Routine Outline
    TextComponent outline_1
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = - 実験の説明 -
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    TextComponent outline_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        各施行の開始時にNikolaが「行きます」と言います
        その後、表情・声の調子・発話内容を変えて感情の表現をします
        ビープ音がなった後、手元のキーボード左側の１~９の数字キーを
        使ってNikolaがどのような感情表現だったか、次の2種類の評価を順番に
        入力してください。

        ①不快~快
        ：すごく不快が１、すごく快が９、普通が５を表します

        ②人らしさ
        ：全く人らしくないが１、すごく人らしいが９です。

        あまり考えこまずに直感的に入力してください。
    TextComponent outline_3
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = 「Enterキー」を押して次に進みます
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Exer_Eyecatch
    TextComponent exer_msg_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        次に評定（キーボード入力）の練習をします
        Nikolaが表現後に、ブザーが鳴るのでその後
        感情表現に対して不快～快の状態とヒトらしさを
        キーボードの1~9で評定してください
    TextComponent exer_msg_2
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = 「Enterキー」を押してを次に進みます
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Countdown_5
    TextComponent count_sc
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine Exer_Counter
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
      Begin Routine:
        text_3.setText(trialCounter)
        trialCounter = trialCounter + 1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Test
    CodeComponent idle_off_test
      Code Type = Py
      disabled = True
      Begin Routine:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
    CodeComponent p_init_test
      Code Type = Py
      Begin Routine:
        # head and eye moves to init position
        client1.send(head_cmd0_2.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
    CodeComponent p_ready_test
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_2.encode("utf-8"))
        time.sleep(1)
    CodeComponent t_go_test
      Code Type = Py
      Begin Routine:
        # Talk message
        tts_topic.publish(message_ikimasu)
        time.sleep(1.5)
    CodeComponent p_start_test
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        time.sleep(1)
    CodeComponent stim_test
      Code Type = Py
      Begin Routine:
        num_01 = text
        num_02 = prosody
        num_03 = expression

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.6}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.7}
        }
        json_data_4 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.6, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_5 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 1.3,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.7, "Angry": 0.0, "Sad": 0.0}
        }

        if num_02 == 1:
            json_string = json.dumps(json_data_2)
        elif num_02 == 2:
            json_string = json.dumps(json_data_3)
        elif num_02 == 3:
            json_string = json.dumps(json_data_4)
        elif num_02 == 4:
            json_string = json.dumps(json_data_5)
        elif num_02 == 0:
            json_string = json.dumps(json_data_1)
        # Send messages
        message = roslibpy.Message({'data': json_string})

        cmd = stim_exp[num_03]
        time.sleep(1)

        def talk_play():
            tts_topic.publish(message)

        def face_play():
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # make thread
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # start thread
        thread1.start()
        thread2.start()
        thread3.start()

        # wait to finish threads
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent _stim_test
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        #client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(1)
    CodeComponent _p_init_test
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_2.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1.5)
  Routine Test_Standby
    TextComponent standby_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        練習は終わりです

        本番の実験を開始します
        本番は合計56パターンの表現を評定いただきます
        連続で28回実施したあと、休憩を挟み
        残り28回を連続で実施します
        あまり考えこまずに直感的に入力してください

        準備できたら「Enterキー」を押してください
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Fin
    TextComponent fin_msg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        お疲れさまでした
        実験を終了します
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Exer_CounterReset
    CodeComponent countreset
      Code Type = Py
      Begin Routine:
        trialCounter = 1
Flow
  Routine Init
  Routine Outline
  LoopInitiator switch_demo loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Demo_Eyecatch
    Routine Idleoff
    Routine Demo_init
    LoopInitiator demo_trials loopType="TrialHandler"
      conditionsFile = xlsx/Random.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'text': 4, 'prosody': 4, 'expression': 4},
        {'text': 0, 'prosody': 0, 'expression': 0},
        {'text': 1, 'prosody': 0, 'expression': 0},
        {'text': 0, 'prosody': 4, 'expression': 4},
        {'text': 1, 'prosody': 2, 'expression': 1},
        {'text': 0, 'prosody': 3, 'expression': 4},
        {'text': 3, 'prosody': 4, 'expression': 4},
        {'text': 0, 'prosody': 0, 'expression': 3},
        {'text': 1, 'prosody': 1, 'expression': 0},
        {'text': 4, 'prosody': 3, 'expression': 0},
        {'text': 3, 'prosody': 0, 'expression': 0},
        {'text': 0, 'prosody': 1, 'expression': 0},
        {'text': 0, 'prosody': 3, 'expression': 0},
        {'text': 0, 'prosody': 0, 'expression': 1},
        {'text': 2, 'prosody': 0, 'expression': 2},
        {'text': 3, 'prosody': 3, 'expression': 0},
        {'text': 2, 'prosody': 1, 'expression': 0},
        {'text': 4, 'prosody': 0, 'expression': 4},
        {'text': 0, 'prosody': 1, 'expression': 2},
        {'text': 1, 'prosody': 0, 'expression': 1},
        {'text': 3, 'prosody': 0, 'expression': 3},
        {'text': 0, 'prosody': 2, 'expression': 2},
        {'text': 2, 'prosody': 2, 'expression': 2}]
      Routine Demo_stim
    LoopTerminator demo_trials
  LoopTerminator switch_demo
  LoopInitiator switch_exer loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Exer_Eyecatch
    Routine Idleoff
    Routine Countdown_5
    LoopInitiator exer_trials loopType="TrialHandler"
      conditionsFile = xlsx/exercise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'text': 1, 'prosody': 1, 'expression': 1},
        {'text': 2, 'prosody': 2, 'expression': 2},
        {'text': 3, 'prosody': 3, 'expression': 3},
        {'text': 4, 'prosody': 4, 'expression': 4},
        {'text': 0, 'prosody': 0, 'expression': 0}]
      Routine Exer_Counter
      Routine Test
      Routine Check_beep
      Routine Check_v
      Routine Check_h
    LoopTerminator exer_trials
    Routine Exer_CounterReset
    Routine Idleon
  LoopTerminator switch_exer
  Routine Test_Standby
  Routine Idleoff
  Routine Countdown_5
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = $expInfo['cndFileName']
    loopType = sequential
    nReps = 1
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    Routine Counter
    LoopInitiator recess_triger loopType="TrialHandler"
      loopType = random
      nReps = isRest
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      Routine Idleon
      Routine Routine
      Routine Idleoff
    LoopTerminator recess_triger
    Routine Test
    Routine Check_beep
    Routine Check_v
    Routine Check_h
  LoopTerminator test_trials
  Routine Idleon
  Routine Fin
