PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['subj'], '3-RepMom', expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'subj': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [720, 480]
  expName = Resume Gaze
  keyboardBackend = ioHub
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Routines
  Routine Init
    TextComponent init_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        実験プログラムを起動しています
        暫くお待ちください
    CodeComponent init_var
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        json_idleoff = json.dumps(compoff_true)
        json_idleon = json.dumps(compoff_false)

        message_idleoff = roslibpy.Message({'data': json_idleoff})
        message_idleon = roslibpy.Message({'data': json_idleon})
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent init_cmd
      Code Type = Py
      Before Experiment:
        # HEAD
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd0_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd1_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd_rm = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.1,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        # EYE
        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd0_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd1_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        # FACS
        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
    CodeComponent init_talk
      Code Type = Py
      Begin Experiment:
        # Volume
        Master_Volume = 1.3

        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_ikimasu = json.dumps(json_data_ikimasu)
        message_ikimasu = roslibpy.Message({'data': json_ikimasu})

        json_data_tuduki = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "さいごのひょうじょうをえらんでください。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_tuduki = json.dumps(json_data_tuduki)
        message_tuduki = roslibpy.Message({'data': json_tuduki})

        json_data_ichi = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いち",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }

        json_data_ni = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "に",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }

        json_data_san = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "さん",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
    CodeComponent init_arduino
      Code Type = Py
      Before Experiment:
        import serial

        ser = serial.Serial("COM3", 9600)
      End Experiment:
        ser.close()
    CodeComponent init_stim
      Code Type = Py
      Before Experiment:
        peakframe_ = 100.0 # 8 or 10

        # facs init value
        iBrow   = 0.0 #innerBrow
        oBrow   = 0.0 #outerbrow
        uLid    = 0.0 #upperLid
        lLid    = 0.0 #lowerLid
        cheek   = 0.0 #cheek
        nWrink  = 0.0 #noseWrinkler
        uLip    = 0.0 #upperLip
        lCorner = 0.0 #lipCorner
        mCS     = 0.0 #mouthCornerStickout
        oMouth  = 0.0 #mouthOpen
        jDrop  = 0.0 #jawDrop

        # negative value
        iBrow_n   = 1.0 #innerBrow
        oBrow_n   = 0.0 #outerbrow
        uLid_n    = -0.8 #upperLid
        lLid_n    = 0.0 #lowerLid
        cheek_n   = 0.0 #cheek
        nWrink_n  = 0.0 #noseWrinkler
        uLip_n    = 0.0 #upperLip
        lCorner_n = -0.9 #lipCorner
        mCS_n     = 0.0 #mouthCornerStickout
        oMouth_n  = 0.0 #mouthOpen
        jDrop_n   = 0.0 #jawDrop

        # positive value
        iBrow_p    = 1.0 #innerBrow
        oBrow_p    = 0.5 #outerbrow
        uLid_p     = 0.3 #upperLid
        lLid_p     = 1.0 #lowerLid
        cheek_p    = 1.0 #cheek
        nWrink_p   = 0.0 #noseWrinkler
        uLip_p     = 0.0 #upperLip
        lCorner_p  = 0.5 #lipCorner
        mCS_p      = 0.5 #mouthCornerStickout
        oMouth_p   = 0.0 #mouthOpen
        jDrop_p    = 0.0 #jawDrop
      Begin Experiment:
        cmd_n_55 = "facs InnerBrow "   + str(iBrow_n * 0.55) + \
          " Outerbrow "           + str(0) + \
          " UpperLid "            + str(uLid_n * 0.55) + \
          " LowerLid "            + str(0) + \
          " Cheek "               + str(0) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_n * 0.55) + \
          " MouthCornerStickout " + str(0) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_n_60 = "facs InnerBrow "   + str(iBrow_n * 0.6) + \
          " Outerbrow "           + str(0) + \
          " UpperLid "            + str(uLid_n * 0.6) + \
          " LowerLid "            + str(0) + \
          " Cheek "               + str(0) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_n * 0.6) + \
          " MouthCornerStickout " + str(0) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_n_65 = "facs InnerBrow "   + str(iBrow_n * 0.65) + \
          " Outerbrow "           + str(0) + \
          " UpperLid "            + str(uLid_n * 0.65) + \
          " LowerLid "            + str(0) + \
          " Cheek "               + str(0) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_n * 0.65) + \
          " MouthCornerStickout " + str(0) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_n_85 = "facs InnerBrow "   + str(iBrow_n * 0.85) + \
          " Outerbrow "           + str(0) + \
          " UpperLid "            + str(uLid_n * 0.85) + \
          " LowerLid "            + str(0) + \
          " Cheek "               + str(0) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_n * 0.85) + \
          " MouthCornerStickout " + str(0) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_n_90 = "facs InnerBrow "   + str(iBrow_n * 0.9) + \
          " Outerbrow "           + str(0) + \
          " UpperLid "            + str(uLid_n * 0.9) + \
          " LowerLid "            + str(0) + \
          " Cheek "               + str(0) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_n * 0.9) + \
          " MouthCornerStickout " + str(0) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_n_95 = "facs InnerBrow "   + str(iBrow_n * 0.95) + \
          " Outerbrow "           + str(0) + \
          " UpperLid "            + str(uLid_n * 0.95) + \
          " LowerLid "            + str(0) + \
          " Cheek "               + str(0) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_n * 0.95) + \
          " MouthCornerStickout " + str(0) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_p_55 = "facs InnerBrow "   + str(iBrow * 0.55) + \
          " Outerbrow "           + str(oBrow_p * 0.55) + \
          " UpperLid "            + str(uLid_p * 0.55) + \
          " LowerLid "            + str(lLid_p * 0.55) + \
          " Cheek "               + str(cheek_p * 0.55) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_p * 0.55) + \
          " MouthCornerStickout " + str(mCS_p * 0.55) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_p_60 = "facs InnerBrow "   + str(iBrow * 0.60) + \
          " Outerbrow "           + str(oBrow_p * 0.60) + \
          " UpperLid "            + str(uLid_p * 0.60) + \
          " LowerLid "            + str(lLid_p * 0.60) + \
          " Cheek "               + str(cheek_p * 0.60) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_p * 0.60) + \
          " MouthCornerStickout " + str(mCS_p * 0.60) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_p_65 = "facs InnerBrow "   + str(iBrow * 0.65) + \
          " Outerbrow "           + str(oBrow_p * 0.65) + \
          " UpperLid "            + str(uLid_p * 0.65) + \
          " LowerLid "            + str(lLid_p * 0.65) + \
          " Cheek "               + str(cheek_p * 0.65) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_p * 0.65) + \
          " MouthCornerStickout " + str(mCS_p * 0.65) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_p_85 = "facs InnerBrow "   + str(iBrow * 0.85) + \
          " Outerbrow "           + str(oBrow_p * 0.85) + \
          " UpperLid "            + str(uLid_p * 0.85) + \
          " LowerLid "            + str(lLid_p * 0.85) + \
          " Cheek "               + str(cheek_p * 0.85) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_p * 0.85) + \
          " MouthCornerStickout " + str(mCS_p * 0.85) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_p_90 = "facs InnerBrow "   + str(iBrow * 0.90) + \
          " Outerbrow "           + str(oBrow_p * 0.90) + \
          " UpperLid "            + str(uLid_p * 0.90) + \
          " LowerLid "            + str(lLid_p * 0.90) + \
          " Cheek "               + str(cheek_p * 0.90) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_p * 0.90) + \
          " MouthCornerStickout " + str(mCS_p * 0.90) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"

        cmd_p_95 = "facs InnerBrow "   + str(iBrow * 0.95) + \
          " Outerbrow "           + str(oBrow_p * 0.95) + \
          " UpperLid "            + str(uLid_p * 0.95) + \
          " LowerLid "            + str(lLid_p * 0.95) + \
          " Cheek "               + str(cheek_p * 0.95) + \
          " NoseWrinkler "        + str(0) + \
          " UpperLip "            + str(0) + \
          " LipCorner "           + str(lCorner_p * 0.95) + \
          " MouthCornerStickout " + str(mCS_p * 0.95) + \
          " MouthOpen "           + str(0) + \
          " JawDrop "             + str(0) + "\n"
  Routine Idleoff
    CodeComponent idle_off
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
  Routine Test_stim
    CodeComponent stim_testx
      Code Type = Py
      disabled = True
      Begin Routine:
        num_01 = method
        num_02 = expression
        num_03 = level_

        print(num_01, num_02, num_03)

        counter_ = 0
        ratio_ = 0

        if num_03 == 1: # 60%
                ratio_ = 60
        elif num_03 == 2: # 90%
                ratio_ = 90

        # STATIC
        if num_01 == 2:
            # NEGATIVE
            if num_02 == 1:
                # calc negative pose
                iBrow   = iBrow_n
                oBrow   = 0 #oBrow_n
                uLid    = uLid_n
                lLid    = 0 #lLid_n
                cheek   = 0 #cheek_n
                nWrink  = 0 #nWrink_n
                uLip    = 0 #uLip_n
                lCorner = lCorner_n
                mCS     = 0 #mCS_n
                oMouth  = 0 #oMouth_n
                jDrop   = 0 #jDrop_n
            # POSITIVE
            elif num_02 == 2:
                # calc positive pose
                iBrow   = iBrow_p
                oBrow   = oBrow_p
                uLid    = uLid_p
                lLid    = lLid_p
                cheek   = cheek_p
                nWrink  = 0 #nWrink_p
                uLip    = 0 #uLip_p
                lCorner = lCorner_p
                mCS     = mCS_p
                oMouth  = 0 #oMouth_p
                jDrop   = 0 #jDrop_p
      Each Frame:
        print(counter_)
        # DYNAMIC
        if num_01 == 1:
            # NEGATIVE
            if num_02 == 1:
                # calc negative pose
                iBrow   = iBrow_n_1   * counter_
                oBrow   = 0 #oBrow_n_1   * counter_
                uLid    = uLid_n_1    * counter_
                lLid    = 0 #lLid_n_1    * counter_
                cheek   = 0 #cheek_n_1   * counter_
                nWrink  = 0 #nWrink_n_1  * counter_
                uLip    = 0 #uLip_n_1    * counter_
                lCorner = lCorner_n_1 * counter_
                mCS     = 0 #mCS_n_1     * counter_
                oMouth  = 0 #oMouth_n_1  * counter_
                jDrop   = 0 #jDrop_n_1   * counter_

            # POSITIVE
            elif num_02 == 2:
                # calc positive pose
                iBrow   = iBrow_p_1   * counter_
                oBrow   = oBrow_p_1   * counter_
                uLid    = uLid_p_1    * counter_
                lLid    = lLid_p_1    * counter_
                cheek   = cheek_p_1   * counter_
                nWrink  = 0 #nWrink_p_1  * counter_
                uLip    = 0 #uLip_p_1    * counter_
                lCorner = lCorner_p_1 * counter_
                mCS     = mCS_p_1     * counter_
                oMouth  = 0 #oMouth_p_1  * counter_
                jDrop   = 0 #jDrop_p_1   * counter_

        if ratio_ >= counter_:
            cmd = "facs InnerBrow "       + str(iBrow) + \
                  " Outerbrow "           + str(oBrow) + \
                  " UpperLid "            + str(uLid) + \
                  " LowerLid "            + str(lLid) + \
                  " Cheek "               + str(cheek) + \
                  " NoseWrinkler "        + str(0) + \
                  " UpperLip "            + str(0) + \
                  " LipCorner "           + str(lCorner) + \
                  " MouthCornerStickout " + str(mCS) + \
                  " MouthOpen "           + str(0) + \
                  " JawDrop "             + str(0) + "\n"
            client2.send(cmd.encode("utf-8"))
        else:
            cmd = "facs InnerBrow "       + str(0) + \
                  " Outerbrow "           + str(0) + \
                  " UpperLid "            + str(0) + \
                  " LowerLid "            + str(0) + \
                  " Cheek "               + str(0) + \
                  " NoseWrinkler "        + str(0) + \
                  " UpperLip "            + str(0) + \
                  " LipCorner "           + str(0) + \
                  " MouthCornerStickout " + str(0) + \
                  " MouthOpen "           + str(0) + \
                  " JawDrop "             + str(0) + "\n"
            client2.send(cmd.encode("utf-8"))
            time.sleep(0.5)

        counter_ = counter_ + 1
  Routine Test_fin
    CodeComponent reset_counter
      Code Type = Py
      Begin Routine:
        counter_emo = 1
  Routine Idleon
    CodeComponent start_idle
      Code Type = Py
      Begin Routine:
        dib_topic.publish(message_idleon)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)
  Routine Check
    TextComponent check_f_msg
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nikolaの表出した表情の中で最も近い番号を
        キーボードの１～３で選択してください。
    KeyboardComponent face
      allowedKeys = '1','2','3', 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Test
    CodeComponent idle_off_test
      Code Type = Py
      disabled = True
      Before Experiment:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
    CodeComponent p_init_test
      Code Type = Py
      Begin Routine:
        # head and eye moves to init position
        client1.send(head_cmd0_2.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
    CodeComponent p_ready_test
      Code Type = Py
      Begin Routine:
        # face forward
        client1.send(head_cmd1_2.encode("utf-8"))
        time.sleep(1)
    CodeComponent t_go_test
      Code Type = Py
      Begin Routine:
        tts_topic.publish(message_ikimasu)
        time.sleep(1.5)
    CodeComponent p_start_test
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd_rm.encode("utf-8"))
        time.sleep(2)
    CodeComponent stim_test
      Code Type = Py
      Begin Routine:
        num_01 = method
        num_02 = expression
        num_03 = level_

        if num_01 == 1:# DYNAMIC
            client2.send(facs_cmd1.encode("utf-8"))
            client1.send(head_cmd1_2.encode("utf-8"))
            client1.send(eye_cmd1_2.encode("utf-8"))
            time.sleep(2)

            if num_02 == 1:# NEGATIVE
                if num_03 == 1:# 60%
                    client2.send(cmd_n_60.encode("utf-8"))
                    time.sleep(1)

                elif num_03 == 2:#90%
                    client2.send(cmd_n_90.encode("utf-8"))
                    time.sleep(1)

            elif num_02 == 2:# POSITIVE
                if num_03 == 1:# 60%
                    client2.send(cmd_p_60.encode("utf-8"))
                    time.sleep(1)

                elif num_03 == 2:# 90%
                    client2.send(cmd_p_90.encode("utf-8"))
                    time.sleep(1)

        elif num_01 == 2:# STATIC

            if num_02 == 1:# NEGATIVE
                if num_03 == 1:# 60%
                    client2.send(cmd_n_60.encode("utf-8"))
                    time.sleep(1.5)

                elif num_03 == 2:# 90%
                    client2.send(cmd_n_90.encode("utf-8"))
                    time.sleep(1.5)

            elif num_02 == 2:# POSITIVE
                if num_03 == 1:# 60%
                    client2.send(cmd_p_60.encode("utf-8"))
                    time.sleep(1.5)

                elif num_03 == 2:# 90%
                    client2.send(cmd_p_90.encode("utf-8"))
                    time.sleep(1.5)

            client1.send(head_cmd1_4.encode("utf-8"))
            client1.send(eye_cmd1_4.encode("utf-8"))
            time.sleep(2)
    CodeComponent Nextdemo
      Code Type = Py
      disabled = True
      Begin Routine:
        tts_topic.publish(message_tuduki)
        time.sleep(4)
  Routine count
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        counter_ = 1
  Routine Check_beep
    CodeComponent check_beep
      Code Type = Py
      Begin Routine:
        ser.write(b"5")
        time.sleep(0.5)
  Routine Outline
    TextComponent outline_1
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        - 実験の説明 -
    TextComponent outline_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        各施行の開始時にNikolaが「行きます」と言います
        その後、Nikolaが動的あるいは静的に表情を表出します
        続けて、Nikolaが「いち」「に」「さん」という掛け声と共に
        ３つの表情を表出するので、その中で表情の最後の状態
        がどれだったか、キーボードの左側の１~３で選択してください

        あまり考えこまずに直感的に入力してください。
    TextComponent outline_3
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 3
      text = 「Enterキー」を押して実験を開始します
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Exer_Eyecatch
    TextComponent exer_msg_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        評定（キーボード入力）の練習を3回します
        Nikolaが表現した後に、「いち」「に」「さん」の掛け声と
        共に3つの表情を表出するので、その中で
        最も近い表情をキーボードの１～３で選択してください
    TextComponent exer_msg_2
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = 「Enterキー」を押してを次に進みます
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Countdown_5
    TextComponent count_sc
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine Emo
    CodeComponent p_ready_emo
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(1)
    CodeComponent t_kazu_emo
      Code Type = Py
      Begin Routine:
        if counter_ == 1:
            json_string = json.dumps(json_data_ichi)
        elif counter_ == 2:
            json_string = json.dumps(json_data_ni)
        elif counter_ == 3:
            json_string = json.dumps(json_data_san)

        message = roslibpy.Message({'data': json_string})
        time.sleep(1)

        tts_topic.publish(message)
        time.sleep(1.5)
    CodeComponent p_down_emo
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd_rm.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1.5)
    CodeComponent stim_emo
      Code Type = Py
      Begin Routine:
        num_02 = expression
        num_03 = level_
        num_04 = emo

        # NEGATIVE
        if num_02 == 1:
            if num_03 == 1: # 60%
                if num_04 == 1:
                    client2.send(cmd_n_55.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 2:
                    client2.send(cmd_n_60.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 3:
                    client2.send(cmd_n_65.encode("utf-8"))
                    time.sleep(1.5)

            elif num_03 == 2: # 90%
                if num_04 == 1:
                    client2.send(cmd_n_85.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 2:
                    client2.send(cmd_n_90.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 3:
                    client2.send(cmd_n_95.encode("utf-8"))
                    time.sleep(1.5)

        # POSITIVE
        elif num_02 == 2:
            if num_03 == 1: # 60%
                if num_04 == 1:
                    client2.send(cmd_p_55.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 2:
                    client2.send(cmd_p_60.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 3:
                    client2.send(cmd_p_65.encode("utf-8"))
                    time.sleep(1.5)

            elif num_03 == 2: # 90%
                if num_04 == 1:
                    client2.send(cmd_p_85.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 2:
                    client2.send(cmd_p_90.encode("utf-8"))
                    time.sleep(1.5)

                elif num_04 == 3:
                    client2.send(cmd_p_95.encode("utf-8"))
                    time.sleep(1.5)

        client1.send(head_cmd1_4.encode("utf-8"))
        client1.send(eye_cmd1_4.encode("utf-8"))
        time.sleep(2)

        counter_ = counter_ + 1
  Routine Emo_end
    CodeComponent p_end_emo
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd0_2.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        time.sleep(2)
  Routine Exer_CounterReset
    CodeComponent countreset
      Code Type = Py
      Begin Routine:
        trialCounter = 1
  Routine Test_Standby
    TextComponent standby_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        練習は終わりです

        本番の実験を開始します
        本番は合計48パターンの表現を評定いただきます
        休憩はなく連続で実施します
        あまり考えこまずに直感的に入力してください

        準備できたら「Enterキー」を押してください
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Counter
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
      Begin Routine:
        text_2.setText(trialCounter)
        trialCounter = trialCounter + 1
    TextComponent text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Fin
    TextComponent fin_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 実験を終了します
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    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine Init
  Routine Outline
  Routine Exer_Eyecatch
  Routine Idleoff
  Routine Countdown_5
  LoopInitiator exer_trials loopType="TrialHandler"
    conditionsFile = xlsx/ResumeRepMom_exer.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'method': 1, 'expression': 1, 'level_': 2},
      {'method': 2, 'expression': 2, 'level_': 2},
      {'method': 1, 'expression': 2, 'level_': 1}]
    Routine Counter
    Routine Test
    Routine count
    LoopInitiator exer_emo loopType="TrialHandler"
      conditionsFile = xlsx/Emo.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'emo': 1},
        {'emo': 2},
        {'emo': 3}]
      Routine Emo
    LoopTerminator exer_emo
    Routine Emo_end
    Routine Check_beep
    Routine Check
  LoopTerminator exer_trials
  Routine Exer_CounterReset
  Routine Idleon
  Routine Test_Standby
  Routine Idleoff
  Routine Countdown_5
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = xlsx/ResumeRepMom .xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'method': 1, 'expression': 1, 'level_': 1},
      {'method': 1, 'expression': 1, 'level_': 2},
      {'method': 1, 'expression': 2, 'level_': 1},
      {'method': 1, 'expression': 2, 'level_': 2},
      {'method': 2, 'expression': 1, 'level_': 1},
      {'method': 2, 'expression': 1, 'level_': 2},
      {'method': 2, 'expression': 2, 'level_': 1},
      {'method': 2, 'expression': 2, 'level_': 2}]
    Routine Counter
    Routine Test
    Routine count
    LoopInitiator test_emo loopType="TrialHandler"
      conditionsFile = xlsx/Emo.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'emo': 1},
        {'emo': 2},
        {'emo': 3}]
      Routine Emo
    LoopTerminator test_emo
    Routine Emo_end
    Routine Check_beep
    Routine Check
  LoopTerminator test_trials
  Routine Idleon
  Routine Fin
