PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['subj'], '4-Gaze', expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'subj': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [720, 480]
  expName = Resume Gaze
  keyboardBackend = ioHub
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Routines
  Routine ledbeepcheck
    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = LEDとブザーの動作チェックを実施しています。
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    CodeComponent ledbeepcheck_2
      Code Type = Py
      disabled = True
      Begin Routine:
        ser.write(b"1")
        time.sleep(1)

        ser.write(b"2")
        time.sleep(1)

        ser.write(b"3")
        time.sleep(1)

        ser.write(b"4")
        time.sleep(1)
      End Experiment:
        ser.close()
  Routine Init
    TextComponent init_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        実験プログラムを起動しています
        暫くお待ちください
    CodeComponent init_var
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        json_idleoff = json.dumps(compoff_true)
        json_idleon = json.dumps(compoff_false)

        message_idleoff = roslibpy.Message({'data': json_idleoff})
        message_idleon = roslibpy.Message({'data': json_idleon})
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent init_cmd
      Code Type = Py
      Before Experiment:
        # HEAD
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd0_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"
        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"
        head_cmd1_4 = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        head_cmd_rm = "HeadController={\"id\":\"HeadController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
          \"targetPoint\":{\"x\":0.0,\"y\":0.1,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        # EYE
        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd0_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        eye_cmd0_8 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \"translateSpeed\":8.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":2.0}\n"

        eye_cmd1_4 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":4.0}\n"

        eye_cmd1_8 = "EyeController={\"id\":\"EyeController\", \"motionTowardObject\":\"\", \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \"translateSpeed\":8.0}\n"

        # FACS
        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
    CodeComponent init_talk
      Code Type = Py
      Begin Experiment:
        # Volume
        Master_Volume = 1.3

        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_ikimasu = json.dumps(json_data_ikimasu)
        message_ikimasu = roslibpy.Message({'data': json_ikimasu})

        json_data_tuduki = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "さいごのひょうじょうをえらんでください。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_tuduki = json.dumps(json_data_tuduki)
        message_tuduki = roslibpy.Message({'data': json_tuduki})

        json_data_ichi = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いち",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }

        json_data_ni = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "に",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }

        json_data_san = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "さん",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
    CodeComponent init_arduino
      Code Type = Py
      Before Experiment:
        import serial

        ser = serial.Serial("COM3", 9600)
      End Experiment:
        ser.close()
    CodeComponent init_v4gaze
      Code Type = Py
      disabled = True
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # Volume
        Master_Volume = 1.3

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        json_idleoff = json.dumps(compoff_true)
        json_idleon = json.dumps(compoff_false)

        message_idleoff = roslibpy.Message({'data': json_idleoff})
        message_idleon = roslibpy.Message({'data': json_idleon})

        # init cmd
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"
        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"
        head_cmd0_4 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":4.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"
        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"
        head_cmd1_4 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":4.0}\n"

        head_cmd3_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.9,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"
        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"
        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"
        eye_cmd0_4 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":4.0}\n"

        eye_cmd0_8 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":8.0}\n"
        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"
        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"
        eye_cmd1_4 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":4.0}\n"

        eye_cmd1_8 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":8.0}\n"

        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
  Routine idleon
    CodeComponent start_idle
      Code Type = Py
      Begin Routine:
        dib_topic.publish(message_idleon)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)
  Routine Check_beep
    CodeComponent check_beep
      Code Type = Py
      Begin Routine:
        ser.write(b"5")
        time.sleep(0.5)
  Routine Outline
    TextComponent outline_1
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = - 実験の説明 -
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    TextComponent outline_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        最初に動作テストを各種行います。
        左右どちらかのブザーが鳴るので、どちら側が鳴ったか
        対応する反応ボックスの左右のボタンをできるだけ素早く
        正確に押して答えてください。

        各施行はNikolaが「行きます」と言って始まります
        この時、Nikolaの目を見るようにしてください
        また、Nikolaは時々右を向いたり、左を向いたりするのですが
        これはどちらのブザーが鳴るか手掛かりになっているわけでは
        ないので気にしないでください
    TextComponent outline_3
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = 「Enterキー」を押して進みます
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Exer_Eyecatch
    TextComponent exer_msg
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        評定（パッド入力）の練習をします
        ブザーが左右どちらかで鳴るので
        ボックスの左右ボタンで選択してください

        「Enterキー」を押してを次に進みます
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Countdown_5
    TextComponent count_sc
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine Routine
    TextComponent countd_msg
      letterHeight = 0.1
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every frame] = $str(300-int(t))
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    TextComponent recess
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0
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      text:
        「Enterキー」を押して再開します。
        (途中で「Enterキー」を押した場合
         タイマーを待たずに開始します。)
        実験運営の方は衝立を設置、撤去してください。
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Test_Standby
    TextComponent standby_msg
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        練習は終わりです

        本番の実験を開始します
        本番は合計96パターンの表出を評定いただきます
        連続で24回実施したあと、休憩を挟み
        残り24回ずつ休憩ををとりながら実施します
        間違ってもそのまま進行してしまうので
        できるだけ素早く、正確に評定をお願いします

        準備できたら「Enterキー」を押してください
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Counter
    CodeComponent break_counter
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
        nRestTrial = 24 # 24回の倍数で休憩をはさむ
      Begin Routine:
        text_2.setText(trialCounter)
        if trialCounter == 1:
            isRest = 0
        else:
            if trialCounter % nRestTrial == 1:
                isRest = 1
            else:
                isRest = 0

        trialCounter = trialCounter + 1
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Test
    CodeComponent idlebe_off
      Code Type = Py
      disabled = True
      Begin Routine:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
      End Experiment:
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    CodeComponent p_init_test
      Code Type = Py
      Begin Routine:
        # head and eye moves to init position
        client1.send(head_cmd0_2.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
    CodeComponent p_ready_test
      Code Type = Py
      Begin Routine:
        # face forward
        client1.send(head_cmd1_2.encode("utf-8"))
        time.sleep(1)
    CodeComponent t_go_test
      Code Type = Py
      Begin Routine:
        tts_topic.publish(message_ikimasu)
        time.sleep(1.5)
    CodeComponent p_start_test
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        time.sleep(1)
    CodeComponent stim_test
      Code Type = Py
      Before Experiment:
        headcmd = ["HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":2}\n", \
                    "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.7,\"y\":0.7,\"z\":1.5},\"translateSpeed\":2}\n", \
                    "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":-0.7,\"y\":0.7,\"z\":1.5},\"translateSpeed\":2}\n"]

        eyecmd = ["EyeController={\"id\":\"EyeController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":8}\n", \
                    "EyeController={\"id\":\"EyeController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.7,\"y\":0.7,\"z\":1.5},\"translateSpeed\":8}\n", \
                    "EyeController={\"id\":\"EyeController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":-0.7,\"y\":0.7,\"z\":1.5},\"translateSpeed\":8}\n"]
      Begin Routine:
        num_01 = modality
        num_02 = modality_lr
        num_03 = movepoint
        num_04 = movepoint_lr

        def stim_():
            if num_01 == 1:
                if num_02 == 1:
                    ser.write(b"1")
                elif num_02 == 2:
                    ser.write(b"2")
            elif num_01 == 2:
                if num_02 == 1:
                    ser.write(b"3")
                elif num_02 == 2:
                    ser.write(b"4")

        def nikola_head():
            if num_03 == 1:
                if num_04 == 1:
                    gaze_cmd1 = headcmd[1]
                elif num_04 == 2:
                    gaze_cmd1 = headcmd[2]
            elif num_03 == 2:
                if num_04 == 2:
                    gaze_cmd1 = headcmd[0]
                elif num_04 == 2:
                    gaze_cmd1 = headcmd[0]
            client1.send(gaze_cmd1.encode("utf-8"))

        def nikola_eye():
            if num_03 == 1:
                if num_04 == 1:
                    gaze_cmd2 = eyecmd[1]
                elif num_04 == 2:
                    gaze_cmd2 = eyecmd[2]
            elif num_03 == 2:
                if num_04 == 1:
                    gaze_cmd2 = eyecmd[1]
                elif num_04 == 2:
                    gaze_cmd2 = eyecmd[2]

            client1.send(gaze_cmd2.encode("utf-8"))

        def wait_1():
            time.sleep(0.6)#2.2

        # Make thread
        thread1 = threading.Thread(target=stim_)
        thread2 = threading.Thread(target=nikola_head)
        thread3 = threading.Thread(target=nikola_eye)
        thread4 = threading.Thread(target=wait_1)

        # Start thread:1
        thread2.start()
        thread3.start()
        thread4.start()

        # wait 600ms
        time.sleep(0.6)

        # Start thread:2
        thread1.start()

        # Wait thread
        thread1.join()
        thread2.join()
        thread3.join()
        thread4.join()
    CodeComponent _stim_test
      Code Type = Py
      disabled = True
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))

        time.sleep(1)
    CodeComponent _p_init_test
      Code Type = Py
      disabled = True
      Begin Routine:
        client1.send(head_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        time.sleep(1.5)
  Routine Check
    TextComponent check_l_msg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        右か左、どちらからビープが鳴ったか
        ボックスの左と右ボタンで答えてください。
    cedrusButtonBoxComponent led
      allowedKeys = 1, 3
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = False
      useBoxTimer = False
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Idleoff
    CodeComponent idle_off
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
    CodeComponent p_init
      Code Type = Py
      Begin Routine:
        # head and eye moves to init position
        client1.send(head_cmd0_2.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
  Routine Exer_CounterReset
    CodeComponent countreset
      Code Type = Py
      Begin Routine:
        trialCounter = 1
  Routine Fin
    TextComponent fin_msg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 終了します
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    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Test_End
    CodeComponent _stim_test_2
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))

        time.sleep(1)
    CodeComponent _p_init_test_2
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_2.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        time.sleep(1.5)
  Routine Exer_Eyecatch_2
    TextComponent exer_msg_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        評定（パッド入力）の練習をします
        ブザーが左右どちらかで鳴るので
        ボックスの左右ボタンで選択してください

        「Enterキー」を押してを次に進みます
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine Init
  Routine Outline
  Routine Exer_Eyecatch
  Routine Idleoff
  Routine Countdown_5
  LoopInitiator exer_trials loopType="TrialHandler"
    conditionsFile = xlsx/ResumeGazewithBeep.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 2}]
    Routine Test
    Routine Check
    Routine Test_End
  LoopTerminator exer_trials
  Routine Exer_CounterReset
  Routine Exer_Eyecatch_2
  Routine Countdown_5
  LoopInitiator exer_trials_2 loopType="TrialHandler"
    conditionsFile = xlsx/ResumeGazewithBeep.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 2}]
    Routine Test
    Routine Check
    Routine Test_End
  LoopTerminator exer_trials_2
  Routine Exer_CounterReset
  Routine Test_Standby
  Routine Idleoff
  Routine Countdown_5
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = xlsx/ResumeGazewithBeep.xlsx
    loopType = random
    nReps = 24
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    conditions:
      [{'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 2}]
    Routine Counter
    LoopInitiator break_ loopType="TrialHandler"
      loopType = random
      nReps = isRest
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      Routine idleon
      Routine Routine
      Routine Idleoff
    LoopTerminator break_
    Routine Test
    Routine Check
    Routine Test_End
  LoopTerminator test_trials
  Routine idleon
  Routine Fin
