PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [720, 480]
  expName = nikola_face_Init
  keyboardBackend = ioHub
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Routines
  Routine Idle_off
    CodeComponent idle_off
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        time.sleep(2)
        dib_topic.publish(message)
        time.sleep(1)
        dib_topic.publish(message)
        time.sleep(1)
  Routine Init
    CodeComponent init_variable
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # Volume
        Master_Volume = 1.3

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        # init cmd
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd3_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.9,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
  Routine Init_pose
    CodeComponent start_pose_demo
      Code Type = Py
      Begin Routine:
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(3)
  Routine routine_1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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      text:
        Nikolaの顔の向きを初期化しました。
        AASSからで「disconnect」してください。
Flow
  Routine Init
  Routine Idle_off
  Routine Init_pose
  Routine routine_1
