PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [720, 480]
  expName = Initialization
  keyboardBackend = ioHub
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Routines
  Routine Init
    TextComponent init
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        実験プログラムを起動しています。
        暫くお待ちください。
  Routine Editor
    TextComponent InnerBrow
      letterHeight = 0.05
      pos = (-0.5, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = InnerBrow:
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    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 0.1
      initVal = 0
      labels = (-1, -0.5, 0, 0.5, 1)
      letterHeight = 0.03
      pos = (0.3, 0.45)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (-1, -0.5, 0, 0.5, 1)
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    TextComponent slider_1_pos
      letterHeight = 0.05
      pos = (-0.3, 0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $slider_1.markerPos
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Flow
  Routine Init
  Routine Editor
