PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [720, 480]
  expName = Resume Gaze
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        実験を行います。
        キーボードの1~9を使って、アンドロイドの
        表情に対する評価値を以下の2つの項目別に入力してください。
        ・感情価（説明）
        ・ヒトらしさ（説明）
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent undelete
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','right'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        displayText=''
        text_=''
      Each Frame:
        keys = key_resp.getKeys()
        if keys:
            displayText = keys[-1].name
            if displayText == 'left' or displayText == 'lshift':
                text_ = 'L'
            elif displayText == 'right' or displayText == 'rshift':
                text_ = 'R'
            else:
                text_ = "ミスです。左シフトか右シフトボタンを押してください。"
            undelete.setText(text_)
    TextComponent text_10
      letterHeight = 0.02
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 3
      text = マウスの左クリックを押して実験を始めます。
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  Routine routine_1
    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every frame] = $str(300-int(t))
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 300.0
      text = マウスを左クリックして開始します。
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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  Routine finish
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 終了します
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ledbeepcheck
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = LEDとブザーの動作チェックを実施しています。
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    CodeComponent ledbeepcheck_2
      Code Type = Py
      Before Experiment:
        import serial
        import time

        ser = serial.Serial("COM3", 9600)
      Begin Routine:
        ser.write(b"1")
        time.sleep(1)

        ser.write(b"2")
        time.sleep(1)

        ser.write(b"3")
        time.sleep(1)

        ser.write(b"4")
        time.sleep(1)
      End Experiment:
        ser.close()
  Routine counter
    CodeComponent break_counter
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
        nRestTrial = 28 # 28回目で休憩をはさむ
      Begin Routine:
        if trialCounter % nRestTrial == 0:
            isRest = 1
        else:
            isRest = 0

        text_2.setText(trialCounter)
        trialCounter = trialCounter + 1
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine start_countdown
    TextComponent text_countdown_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)
  Routine test
    CodeComponent stop_idle
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        # eyemove 2 initpose
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent Init_pose
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_1.encode("utf-8"))
        # client1.send(eye_cmd0_2.encode("utf-8"))
        # client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(3)
    CodeComponent start_pose
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent ikimasu
      Code Type = Py
      Before Experiment:
        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
      Begin Routine:
        json_string = json.dumps(json_data_ikimasu)
        message = roslibpy.Message({'data': json_string})
        tts_topic.publish(message)
        time.sleep(3)
    CodeComponent stim
      Code Type = Py
      Before Experiment:
        stim_txt = ["僕は普通", "僕は悲しい", "僕はつらい", "僕はうれしい", "僕は楽しい"]
        stim_proso = ["\"Joy\":0,\"Angry\":0,\"Sad\":0", \
                      "\"Joy\":0,\"Angry\":0,\"Sad\":1", \
                      "\"Joy\":0,\"Angry\":0,\"Sad\":1", \
                      "\"Joy\":1,\"Angry\":0,\"Sad\":0", \
                      "\"Joy\":1,\"Angry\":0,\"Sad\":0"]
        stim_exp = ["facs InnerBrow 0 Outerbrow 0 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0 UpperLip 0 LipCorner 0 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow -0.5 Outerbrow -0.7 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0.5 UpperLip 0 LipCorner -0.5 MouthCornerStickout 0 MouthOpen 1 JawDrop 0\n", \
                    "facs InnerBrow -0.5 Outerbrow -0.7 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0.5 UpperLip 0 LipCorner -0.5 MouthCornerStickout 0 MouthOpen -1 JawDrop 0\n", \
                    "facs InnerBrow 0.3 Outerbrow 0.3 UpperLid 0 LowerLid 0 Cheek 0.4 NoseWrinkler 0 UpperLip 0 LipCorner 0.3 MouthCornerStickout 0.5 MouthOpen 1 JawDrop 0\n", \
                    "facs InnerBrow 0.3 Outerbrow 0.3 UpperLid 0 LowerLid 0 Cheek 0.4 NoseWrinkler 0 UpperLip 0 LipCorner 0.3 MouthCornerStickout 0.5 MouthOpen -1 JawDrop 0\n"]
      Begin Routine:
        num_01 = text
        num_02 = prosody
        num_03 = expression

        def talk_play():
            json_data = {
                "Command": "ttsPlaywithParam",
                "TtsID": 1023,
                "Text": stim_txt[num_01],
                "Volume": 0.8,
                "Rate": 1.0,
                "Pitch": 1.0,
                "Emphasis": 1.0,
                "Emotion":
                {
                    stim_proso[num_02]
                }
            }
            json_string = json.dumps(json_data)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            #time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent stim_end
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        #client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(2)
    CodeComponent Init_pose_2
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_1.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))

        time.sleep(3)
    CodeComponent start_idle
      Code Type = Py
      Begin Routine:
        json_string = json.dumps(compoff_false)

        #topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(1)
  Routine exercise
    CodeComponent stop_idle_ex
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        # init cmd
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
      Begin Routine:
        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        # eyemove 2 initpose
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent Init_pose_ex
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_1.encode("utf-8"))
        # client1.send(eye_cmd0_2.encode("utf-8"))
        # client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(3)
    CodeComponent start_pose_ex
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent ikimasu_ex
      Code Type = Py
      Before Experiment:
        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
      Begin Routine:
        json_string = json.dumps(json_data_ikimasu)
        message = roslibpy.Message({'data': json_string})
        time.sleep(1)
        tts_topic.publish(message)
        time.sleep(1)
    CodeComponent stim_ex
      Code Type = Py
      Before Experiment:
        stim_txt = ["僕は普通", "僕は悲しい", "僕はつらい", "僕はうれしい", "僕は楽しい"]
        stim_proso = ["{\"Joy\": 0.0, \"Angry\": 0.0, \"Sad\": 0.0}", \
                      "{\"Joy\": 0.0, \"Angry\": 0.0, \"Sad\": 1.0}", \
                      "{\"Joy\": 0.0, \"Angry\": 0.0, \"Sad\": 1.0}", \
                      "{\"Joy\": 1.0, \"Angry\": 0.0, \"Sad\": 0.0}", \
                      "{\"Joy\": 1.0, \"Angry\": 0.0, \"Sad\": 0.0}"]
        stim_exp = ["facs InnerBrow 0 Outerbrow 0 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0 UpperLip 0 LipCorner 0 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n", \
                    "facs InnerBrow -0.5 Outerbrow -0.7 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0.5 UpperLip 0 LipCorner -0.5 MouthCornerStickout 0 MouthOpen 1 JawDrop 0\n", \
                    "facs InnerBrow -0.5 Outerbrow -0.7 UpperLid 0 LowerLid 0 Cheek 0 NoseWrinkler 0.5 UpperLip 0 LipCorner -0.5 MouthCornerStickout 0 MouthOpen -1 JawDrop 0\n", \
                    "facs InnerBrow 0.3 Outerbrow 0.3 UpperLid 0 LowerLid 0 Cheek 0.4 NoseWrinkler 0 UpperLip 0 LipCorner 0.3 MouthCornerStickout 0.5 MouthOpen 1 JawDrop 0\n", \
                    "facs InnerBrow 0.3 Outerbrow 0.3 UpperLid 0 LowerLid 0 Cheek 0.4 NoseWrinkler 0 UpperLip 0 LipCorner 0.3 MouthCornerStickout 0.5 MouthOpen -1 JawDrop 0\n"]
      Begin Routine:
        num_01 = text
        num_02 = prosody
        num_03 = expression

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 1.0}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 1.0, "Angry": 0.0, "Sad": 0.0}
        }


        def talk_play():
            if num_02 == 1:
                json_string = json.dumps(json_data_2)
            elif num_02 == 2:
                json_string = json.dumps(json_data_2)
            elif num_02 == 3:
                json_string = json.dumps(json_data_3)
            elif num_02 == 4:
                json_string = json.dumps(json_data_3)
            elif num_02 == 5:
                json_string = json.dumps(json_data_1)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent stim_end_ex
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        #client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(2)
    CodeComponent Init_pose_ex_2
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_1.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))

        time.sleep(3)
    CodeComponent start_idle_ex
      Code Type = Py
      Begin Routine:
        json_string = json.dumps(compoff_false)

        #topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(1)
  Routine check_v
    TextComponent text_4
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 感情価の値を1~9のボタンで評価してください。
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5','6','7','8','9', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine check_a
    TextComponent text_9
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ヒトらしさの値を1~9のボタンで評価してください。
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','5','6','7','8','9', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine standby_
  Routine routine
  Routine standby
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        実験を開始します。
        準備できたら左クリックを押してください。
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine sample
    CodeComponent stop_idle_ex_2
      Code Type = Py
      Before Experiment:
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      Begin Routine:
        # stop idle behavior
        json_string = json.dumps(compoff_true)
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        # eyemove 2 initpose
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
      End Experiment:
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    CodeComponent start_pose_ex_2
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent ikimasu_ex_2
      Code Type = Py
      Before Experiment:
        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
      Begin Routine:
        json_string = json.dumps(json_data_ikimasu)
        message = roslibpy.Message({'data': json_string})
        time.sleep(1)
        tts_topic.publish(message)
        time.sleep(1)
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        num_01 = 1
        num_02 = 1
        num_03 = 1

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 1.0}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 1.0, "Angry": 0.0, "Sad": 0.0}
        }


        def talk_play():
            if num_02 == 1:
                json_string = json.dumps(json_data_2)
            elif num_02 == 2:
                json_string = json.dumps(json_data_2)
            elif num_02 == 3:
                json_string = json.dumps(json_data_3)
            elif num_02 == 4:
                json_string = json.dumps(json_data_3)
            elif num_02 == 5:
                json_string = json.dumps(json_data_1)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        num_01 = 2
        num_02 = 2
        num_03 = 2

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 1.0}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 1.0, "Angry": 0.0, "Sad": 0.0}
        }


        def talk_play():
            if num_02 == 1:
                json_string = json.dumps(json_data_2)
            elif num_02 == 2:
                json_string = json.dumps(json_data_2)
            elif num_02 == 3:
                json_string = json.dumps(json_data_3)
            elif num_02 == 4:
                json_string = json.dumps(json_data_3)
            elif num_02 == 5:
                json_string = json.dumps(json_data_1)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        num_01 = 3
        num_02 = 3
        num_03 = 3

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 1.0}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 1.0, "Angry": 0.0, "Sad": 0.0}
        }


        def talk_play():
            if num_02 == 1:
                json_string = json.dumps(json_data_2)
            elif num_02 == 2:
                json_string = json.dumps(json_data_2)
            elif num_02 == 3:
                json_string = json.dumps(json_data_3)
            elif num_02 == 4:
                json_string = json.dumps(json_data_3)
            elif num_02 == 5:
                json_string = json.dumps(json_data_1)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        num_01 = 4
        num_02 = 4
        num_03 = 4

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 1.0}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 1.0, "Angry": 0.0, "Sad": 0.0}
        }


        def talk_play():
            if num_02 == 1:
                json_string = json.dumps(json_data_2)
            elif num_02 == 2:
                json_string = json.dumps(json_data_2)
            elif num_02 == 3:
                json_string = json.dumps(json_data_3)
            elif num_02 == 4:
                json_string = json.dumps(json_data_3)
            elif num_02 == 5:
                json_string = json.dumps(json_data_1)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        num_01 = 5
        num_02 = 5
        num_03 = 5

        json_data_1 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 0.0}
        }
        json_data_2 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 0.0, "Angry": 0.0, "Sad": 1.0}
        }
        json_data_3 = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": stim_txt[num_01],
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion": {"Joy": 1.0, "Angry": 0.0, "Sad": 0.0}
        }


        def talk_play():
            if num_02 == 1:
                json_string = json.dumps(json_data_2)
            elif num_02 == 2:
                json_string = json.dumps(json_data_2)
            elif num_02 == 3:
                json_string = json.dumps(json_data_3)
            elif num_02 == 4:
                json_string = json.dumps(json_data_3)
            elif num_02 == 5:
                json_string = json.dumps(json_data_1)
            # Send messages
            message = roslibpy.Message({'data': json_string})
            #time.sleep(1)
            tts_topic.publish(message)
            time.sleep(1)

        def face_play():
            cmd = stim_exp[num_03]
            client2.send(cmd.encode("utf-8"))

        def wait_():
            time.sleep(1)

        # スレッドを作成
        thread1 = threading.Thread(target=talk_play)
        thread2 = threading.Thread(target=face_play)
        thread3 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
    CodeComponent stim_end_ex_2
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        #client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(2)
    CodeComponent start_idle_ex_2
      Code Type = Py
      Begin Routine:
        json_string = json.dumps(compoff_false)

        #topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        message = roslibpy.Message({'data': json_string})
        dib_topic.publish(message)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))

        time.sleep(1)
Flow
  Routine trial
  Routine start_countdown
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = exercise.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': 1, 'prosody': 1, 'expression': 1},
      {'text': 2, 'prosody': 2, 'expression': 2},
      {'text': 3, 'prosody': 3, 'expression': 3},
      {'text': 4, 'prosody': 4, 'expression': 4},
      {'text': 0, 'prosody': 0, 'expression': 0}]
    Routine exercise
    Routine check_v
    Routine check_a
  LoopTerminator trials_2
  Routine standby
  Routine start_countdown
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ResumeMulti.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 1, 'prosody': 0, 'expression': 0},
      {'text': 2, 'prosody': 0, 'expression': 0},
      {'text': 3, 'prosody': 0, 'expression': 0},
      {'text': 4, 'prosody': 0, 'expression': 0},
      {'text': 0, 'prosody': 1, 'expression': 0},
      {'text': 0, 'prosody': 2, 'expression': 0},
      {'text': 0, 'prosody': 3, 'expression': 0},
      {'text': 0, 'prosody': 4, 'expression': 0},
      {'text': 0, 'prosody': 0, 'expression': 1},
      {'text': 0, 'prosody': 0, 'expression': 2},
      {'text': 0, 'prosody': 0, 'expression': 3},
      {'text': 0, 'prosody': 0, 'expression': 4},
      {'text': 1, 'prosody': 1, 'expression': 0},
      {'text': 1, 'prosody': 2, 'expression': 0},
      {'text': 2, 'prosody': 1, 'expression': 0},
      {'text': 2, 'prosody': 2, 'expression': 0},
      {'text': 3, 'prosody': 3, 'expression': 0},
      {'text': 3, 'prosody': 4, 'expression': 0},
      {'text': 4, 'prosody': 3, 'expression': 0},
      {'text': 4, 'prosody': 4, 'expression': 0},
      {'text': 1, 'prosody': 0, 'expression': 1},
      {'text': 1, 'prosody': 0, 'expression': 2},
      {'text': 2, 'prosody': 0, 'expression': 1},
      {'text': 2, 'prosody': 0, 'expression': 2},
      {'text': 3, 'prosody': 0, 'expression': 3},
      {'text': 3, 'prosody': 0, 'expression': 4},
      {'text': 4, 'prosody': 0, 'expression': 3},
      {'text': 4, 'prosody': 0, 'expression': 4},
      {'text': 0, 'prosody': 1, 'expression': 1},
      {'text': 0, 'prosody': 1, 'expression': 2},
      {'text': 0, 'prosody': 2, 'expression': 1},
      {'text': 0, 'prosody': 2, 'expression': 2},
      {'text': 0, 'prosody': 3, 'expression': 3},
      {'text': 0, 'prosody': 3, 'expression': 4},
      {'text': 0, 'prosody': 4, 'expression': 3}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
    Routine counter
    LoopInitiator break_ loopType="TrialHandler"
      loopType = random
      nReps = isRest
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      Routine routine_1
    LoopTerminator break_
    Routine test
    Routine check_v
    Routine check_a
  LoopTerminator trials
  Routine finish
