PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [720, 480]
  expName = Resume Gaze
  keyboardBackend = ioHub
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Routines
  Routine Init
    TextComponent init
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        実験プログラムを起動しています。
        暫くお待ちください。
    CodeComponent init_variable_2
      Code Type = Py
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # Volume
        Master_Volume = 1.3

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        json_idleoff = json.dumps(compoff_true)
        json_idleon = json.dumps(compoff_false)

        message_idleoff = roslibpy.Message({'data': json_idleoff})
        message_idleon = roslibpy.Message({'data': json_idleon})

        # init cmd
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd3_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.9,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent init_text
      Code Type = Py
      Begin Experiment:
        json_data_ikimasu = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 1.0,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }

        json_ikimasu = json.dumps(json_data_ikimasu)
        message_ikimasu = roslibpy.Message({'data': json_ikimasu})
    CodeComponent init_stim
      Code Type = Py
      Before Experiment:
        peakframe_ = 100.0 # 8 or 10

        # facs init value
        iBrow   = 0.0 #innerBrow
        oBrow   = 0.0 #outerbrow
        uLid    = 0.0 #upperLid
        lLid    = 0.0 #lowerLid
        cheek   = 0.0 #cheek
        nWrink  = 0.0 #noseWrinkler
        uLip    = 0.0 #upperLip
        lCorner = 0.0 #lipCorner
        mCS     = 0.0 #mouthCornerStickout
        oMouth  = 0.0 #mouthOpen
        jDrop  = 0.0 #jawDrop

        # positive value
        iBrow_p    = 1.0 #innerBrow
        oBrow_p    = 0.5 #outerbrow
        uLid_p     = 0.3 #upperLid
        lLid_p     = 1.0 #lowerLid
        cheek_p    = 1.0 #cheek
        nWrink_p   = 0.0 #noseWrinkler
        uLip_p     = 0.0 #upperLip
        lCorner_p  = 0.5 #lipCorner
        mCS_p      = 0.5 #mouthCornerStickout
        oMouth_p   = 0.0 #mouthOpen
        jDrop_p    = 0.0 #jawDrop

        # negative value
        iBrow_n   = 1.0 #innerBrow
        oBrow_n   = 0.0 #outerbrow
        uLid_n    = -0.8 #upperLid
        lLid_n    = 0.0 #lowerLid
        cheek_n   = 0.0 #cheek
        nWrink_n  = 0.0 #noseWrinkler
        uLip_n    = 0.0 #upperLip
        lCorner_n = -0.9 #lipCorner
        mCS_n     = 0.0 #mouthCornerStickout
        oMouth_n  = 0.0 #mouthOpen
        jDrop_n   = 0.0 #jawDrop
      Begin Experiment:
        iBrow_p_1   = iBrow_p   / peakframe_
        oBrow_p_1   = oBrow_p   / peakframe_
        uLid_p_1    = uLid_p    / peakframe_
        lLid_p_1    = lLid_p    / peakframe_
        cheek_p_1   = cheek_p   / peakframe_
        nWrink_p_1  = nWrink_p  / peakframe_
        uLip_p_1    = uLip_p    / peakframe_
        lCorner_p_1 = lCorner_p / peakframe_
        mCS_p_1     = mCS_p     / peakframe_
        oMouth_p_1  = oMouth_p  / peakframe_
        jDrop_p_1   = jDrop_p   / peakframe_

        iBrow_n_1   = iBrow_n   / peakframe_
        oBrow_n_1   = oBrow_n   / peakframe_
        uLid_n_1    = uLid_n    / peakframe_
        lLid_n_1    = lLid_n    / peakframe_
        cheek_n_1   = cheek_n   / peakframe_
        nWrink_n_1  = nWrink_n  / peakframe_
        uLip_n_1    = uLip_n    / peakframe_
        lCorner_n_1 = lCorner_n / peakframe_
        mCS_n_1     = mCS_n     / peakframe_
        oMouth_n_1  = oMouth_n  / peakframe_
        jDrop_n_1   = jDrop_n   / peakframe_
  Routine Idleoff
    CodeComponent idle_off
      Code Type = Py
      Begin Routine:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)
  Routine Explanation
    TextComponent explanaton_1
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        実験を行います。
        最初に、行きますの掛け声の後アンドロイドが表情を作成します。
        その後、3つの表情を表出するので、その表情に最も近い表情を
        キーボードの１～３で選択してください。
    MouseComponent routine_end_1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent disp_keyresp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent keyresp
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent check_keyresp
      Code Type = Py
      Begin Routine:
        displayText=''
        text_=''
      Each Frame:
        keys = keyresp.getKeys()
        if keys:
            displayText = keys[-1].name
            if displayText == 'a' or displayText == '1':
                text_ = '1'
            elif displayText == 'b' or displayText == '2':
                text_ = '2'
            elif displayText == 'c' or displayText == '3':
                text_ = '3'
            else:
                text_ = "左シフトか右シフトボタンを押してください。"
            disp_keyresp.setText(text_)
    TextComponent explanation_2
      letterHeight = 0.02
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 3
      text = マウスの左クリックを押して実験を開始します。
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  Routine Test_init
    CodeComponent init_variable
      Code Type = Py
      disabled = True
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
        import socket
        import threading

        #  server setting
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # create socket
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # connect server
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # roslibpy server setting
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run() # connect roslibpy

        # roslibpy topic
        dib_topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')
        tts_topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # roslibpy message
        compoff_true = {"completely_off": True}   # stop idle behavior
        compoff_false = {"completely_off": False} # start idle behavior

        # init cmd
        head_cmd0_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd0_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd1_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        head_cmd1_2 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        head_cmd3_1 = "HeadController={\"id\":\"HeadController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.9,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        eye_cmd0_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd0_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":0.5,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        eye_cmd1_1 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":1.0}\n"

        eye_cmd1_2 = "EyeController={\"id\":\"EyeController\", \
                    \"motionTowardObject\":\"\", \
                    \"targetMotionMode\":2, \
                    \"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5}, \
                    \"translateSpeed\":2.0}\n"

        facs_cmd0 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid -1 \
                     LowerLid 1 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"

        facs_cmd1 = "facs InnerBrow 0 \
                     Outerbrow 0 \
                     UpperLid 0 \
                     LowerLid 0 \
                     Cheek 0 \
                     NoseWrinkler 0 \
                     UpperLip 0 \
                     LipCorner 0 \
                     MouthCornerStickout 0 \
                     MouthOpen 0 \
                     JawDrop 0\n"
      End Experiment:
        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)

        # Terminate connection
        client.terminate()

        # socket client close
        client1.close()
        client2.close()
    CodeComponent idle_off__test
      Code Type = Py
      Before Experiment:
        # stop idle behavior
        dib_topic.publish(message_idleoff)
        time.sleep(1)

        # close eye
        client2.send(facs_cmd0.encode("utf-8"))
        time.sleep(1)
    CodeComponent Init_pose_test
      Code Type = Py
      Begin Routine:
        # head and eye moves to init position
        client1.send(head_cmd0_1.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        time.sleep(3)
    CodeComponent start_pose_test
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent ikimasu_test
      Code Type = Py
      Begin Routine:
        tts_topic.publish(message_ikimasu)
        time.sleep(2)
    CodeComponent ready_pose_test
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        time.sleep(2)
  Routine Test_stim
    CodeComponent stim_test
      Code Type = Py
      Begin Routine:
        num_01 = method
        num_02 = expression
        num_03 = level_

        print(num_01, num_02, num_03)

        counter_ = 0
        ratio_ = 0

        if num_03 == 1: # 60%
                ratio_ = 60
        elif num_03 == 2: # 90%
                ratio_ = 90

        # STATIC
        if num_01 == 2:
            # NEGATIVE
            if num_02 == 1:
                # calc negative pose
                iBrow   = iBrow_n
                oBrow   = 0 #oBrow_n
                uLid    = uLid_n
                lLid    = 0 #lLid_n
                cheek   = 0 #cheek_n
                nWrink  = 0 #nWrink_n
                uLip    = 0 #uLip_n
                lCorner = lCorner_n
                mCS     = 0 #mCS_n
                oMouth  = 0 #oMouth_n
                jDrop   = 0 #jDrop_n
            # POSITIVE
            elif num_02 == 2:
                # calc positive pose
                iBrow   = iBrow_p
                oBrow   = oBrow_p
                uLid    = uLid_p
                lLid    = lLid_p
                cheek   = cheek_p
                nWrink  = 0 #nWrink_p
                uLip    = 0 #uLip_p
                lCorner = lCorner_p
                mCS     = mCS_p
                oMouth  = 0 #oMouth_p
                jDrop   = 0 #jDrop_p
      Each Frame:
        print(counter_)
        # DYNAMIC
        if num_01 == 1:
            # NEGATIVE
            if num_02 == 1:
                # calc negative pose
                iBrow   = iBrow_n_1   * counter_
                oBrow   = 0 #oBrow_n_1   * counter_
                uLid    = uLid_n_1    * counter_
                lLid    = 0 #lLid_n_1    * counter_
                cheek   = 0 #cheek_n_1   * counter_
                nWrink  = 0 #nWrink_n_1  * counter_
                uLip    = 0 #uLip_n_1    * counter_
                lCorner = lCorner_n_1 * counter_
                mCS     = 0 #mCS_n_1     * counter_
                oMouth  = 0 #oMouth_n_1  * counter_
                jDrop   = 0 #jDrop_n_1   * counter_

            # POSITIVE
            elif num_02 == 2:
                # calc positive pose
                iBrow   = iBrow_p_1   * counter_
                oBrow   = oBrow_p_1   * counter_
                uLid    = uLid_p_1    * counter_
                lLid    = lLid_p_1    * counter_
                cheek   = cheek_p_1   * counter_
                nWrink  = 0 #nWrink_p_1  * counter_
                uLip    = 0 #uLip_p_1    * counter_
                lCorner = lCorner_p_1 * counter_
                mCS     = mCS_p_1     * counter_
                oMouth  = 0 #oMouth_p_1  * counter_
                jDrop   = 0 #jDrop_p_1   * counter_

        if ratio_ >= counter_:
            cmd = "facs InnerBrow "       + str(iBrow) + \
                  " Outerbrow "           + str(oBrow) + \
                  " UpperLid "            + str(uLid) + \
                  " LowerLid "            + str(lLid) + \
                  " Cheek "               + str(cheek) + \
                  " NoseWrinkler "        + str(0) + \
                  " UpperLip "            + str(0) + \
                  " LipCorner "           + str(lCorner) + \
                  " MouthCornerStickout " + str(mCS) + \
                  " MouthOpen "           + str(0) + \
                  " JawDrop "             + str(0) + "\n"
            client2.send(cmd.encode("utf-8"))
        else:
            cmd = "facs InnerBrow "       + str(0) + \
                  " Outerbrow "           + str(0) + \
                  " UpperLid "            + str(0) + \
                  " LowerLid "            + str(0) + \
                  " Cheek "               + str(0) + \
                  " NoseWrinkler "        + str(0) + \
                  " UpperLip "            + str(0) + \
                  " LipCorner "           + str(0) + \
                  " MouthCornerStickout " + str(0) + \
                  " MouthOpen "           + str(0) + \
                  " JawDrop "             + str(0) + "\n"
            client2.send(cmd.encode("utf-8"))
            time.sleep(0.5)

        counter_ = counter_ + 1
  Routine Test_fin
    CodeComponent stim_end_test
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd1_1.encode("utf-8"))
        client1.send(eye_cmd1_2.encode("utf-8"))
        time.sleep(2)
    CodeComponent Init_pose_test_2
      Code Type = Py
      Begin Routine:
        client1.send(head_cmd0_1.encode("utf-8"))
        client2.send(facs_cmd0.encode("utf-8"))
        client1.send(eye_cmd0_2.encode("utf-8"))
        time.sleep(3)
  Routine Idleon
    CodeComponent start_idle
      Code Type = Py
      Begin Routine:
        dib_topic.publish(message_idleon)
        time.sleep(1)

        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)
  Routine Emo
    TextComponent explanation_emotion
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 評価用の表情を表示します。
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    CodeComponent start_pose_ichi
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent ichi
      Code Type = Py
      Before Experiment:
        json_data_ichi = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いち",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
      Begin Routine:
        json_string = json.dumps(json_data_ichi)
        message = roslibpy.Message({'data': json_string})
        time.sleep(1)

        tts_topic.publish(message)
        time.sleep(1)
    CodeComponent emo_1
      Code Type = Py
      Begin Experiment:
        # FACS Piece Value
        # NEGATIVE
        iBrow_n_piece   = iBrow_n   / peakframe_ #innerBrow
        oBrow_n_piece   = oBrow_n   / peakframe_ #outerbrow
        uLid_n_piece    = uLid_n    / peakframe_ #upperLid
        lLid_n_piece    = lLid_n    / peakframe_ #lowerLid
        cheek_n_piece   = cheek_n   / peakframe_ #cheek
        nWrink_n_piece  = 0 #nWrink_n  / peakframe_ #noseWrinkler
        uLip_n_piece    = 0 #uLip_n    / peakframe_ #upperLip
        lCorner_n_piece = lCorner_n / peakframe_ #lipCorner
        mCS_n_piece     = mCS_n     / peakframe_ #mouthCornerStickout
        oMouth_n_piece  = 0 #oMouth_n  / peakframe_ #mouthOpen
        jDrop_n_piece   = 0 #jDrop_n   / peakframe_ #jawDrop

        # POSITIVE
        iBrow_p_piece   = iBrow_p   / peakframe_ #innerBrow
        oBrow_p_piece   = oBrow_p   / peakframe_ #outerbrow
        uLid_p_piece    = uLid_p    / peakframe_ #upperLid
        lLid_p_piece    = lLid_p    / peakframe_ #lowerLid
        cheek_p_piece   = cheek_p   / peakframe_ #cheek
        nWrink_p_piece  = 0 #nWrink_p  / peakframe_ #noseWrinkler
        uLip_p_piece    = 0 #uLip_p    / peakframe_ #upperLip
        lCorner_p_piece = lCorner_p / peakframe_ #lipCorner
        mCS_p_piece     = mCS_p     / peakframe_ #mouthCornerStickout
        oMouth_p_piece  = 0 #oMouth_p  / peakframe_ #mouthOpen
        jDrop_p_piece   = 0 #jDrop_p   / peakframe_ #jawDrop
      Begin Routine:
        num_02 = expression
        num_03 = level_

        magnification_1 = 5.5
        magnification_2 = 8.5

        # NEGATIVE
        if num_02 == 1:
            if num_03 == 1: # 60%
                iBrow   = iBrow_n_piece   * magnification_1
                oBrow   = oBrow_n_piece   * magnification_1
                uLid    = uLid_n_piece    * magnification_1
                lLid    = lLid_n_piece    * magnification_1
                cheek   = cheek_n_piece   * magnification_1
                nWrink  = 0 #nWrink_n_piece  * magnification_1
                uLip    = 0 #uLip_n_piece    * magnification_1
                lCorner = lCorner_n_piece * magnification_1
                mCS     = mCS_n_piece     * magnification_1
                oMouth  = 0 #oMouth_n_piece  * magnification_1
                jDrop   = 0 #jDrop_n_piece   * magnification_1

            elif num_03 == 2: # 90%
                iBrow   = iBrow_n_piece   * magnification_2
                oBrow   = oBrow_n_piece   * magnification_2
                uLid    = uLid_n_piece    * magnification_2
                lLid    = lLid_n_piece    * magnification_2
                cheek   = cheek_n_piece   * magnification_2
                nWrink  = 0 #nWrink_n_piece  * magnification_2
                uLip    = 0 #uLip_n_piece    * magnification_2
                lCorner = lCorner_n_piece * magnification_2
                mCS     = mCS_n_piece     * magnification_2
                oMouth  = 0 #oMouth_n_piece  * magnification_2
                jDrop   = 0 #jDrop_n_piece   * magnification_2

        # POSITIVE
        elif num_02 == 2:
            if num_03 == 1: # 60%
                iBrow   = iBrow_p_piece   * magnification_1
                oBrow   = oBrow_p_piece   * magnification_1
                uLid    = uLid_p_piece    * magnification_1
                lLid    = lLid_p_piece    * magnification_1
                cheek   = cheek_p_piece   * magnification_1
                nWrink  = 0 #nWrink_p_piece  * magnification_1
                uLip    = 0 #uLip_p_piece    * magnification_1
                lCorner = lCorner_p_piece * magnification_1
                mCS     = mCS_p_piece     * magnification_1
                oMouth  = 0 #oMouth_p_piece  * magnification_1
                jDrop   = 0 #jDrop_p_piece   * magnification_1

            elif num_03 == 2: # 90%
                iBrow   = iBrow_p_piece   * magnification_2
                oBrow   = oBrow_p_piece   * magnification_2
                uLid    = uLid_p_piece    * magnification_2
                lLid    = lLid_p_piece    * magnification_2
                cheek   = cheek_p_piece   * magnification_2
                nWrink  = 0 #nWrink_p_piece  * magnification_2
                uLip    = 0 #uLip_p_piece    * magnification_2
                lCorner = lCorner_p_piece * magnification_2
                mCS     = mCS_p_piece     * magnification_2
                oMouth  = 0 #oMouth_p_piece  * magnification_2
                jDrop   = 0 #jDrop_p_piece   * magnification_2

        cmd = "facs InnerBrow "           + str(iBrow)   + \
                  " Outerbrow "           + str(oBrow)   + \
                  " UpperLid "            + str(uLid)    + \
                  " LowerLid "            + str(lLid)    + \
                  " Cheek "               + str(cheek)   + \
                  " NoseWrinkler "        + str(0)       + \
                  " UpperLip "            + str(0)       + \
                  " LipCorner "           + str(lCorner) + \
                  " MouthCornerStickout " + str(mCS)     + \
                  " MouthOpen "           + str(0)       + \
                  " JawDrop "             + str(0)       + "\n"
        time.sleep(2)

        client2.send(cmd.encode("utf-8"))
        time.sleep(0.5)
    CodeComponent start_pose_ni
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent ni
      Code Type = Py
      Before Experiment:
        json_data_ni = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "に",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
      Begin Routine:
        json_string = json.dumps(json_data_ni)
        message = roslibpy.Message({'data': json_string})
        time.sleep(1)

        tts_topic.publish(message)
        time.sleep(1)
    CodeComponent emo_2
      Code Type = Py
      Begin Routine:
        num_02 = expression
        num_03 = level_

        magnification_1 = 6
        magnification_2 = 9

        # NEGATIVE
        if num_02 == 1:
            if num_03 == 1: # 60%
                iBrow   = iBrow_n_piece   * magnification_1
                oBrow   = oBrow_n_piece   * magnification_1
                uLid    = uLid_n_piece    * magnification_1
                lLid    = lLid_n_piece    * magnification_1
                cheek   = cheek_n_piece   * magnification_1
                nWrink  = 0 #nWrink_n_piece  * magnification_1
                uLip    = 0 #uLip_n_piece    * magnification_1
                lCorner = lCorner_n_piece * magnification_1
                mCS     = mCS_n_piece     * magnification_1
                oMouth  = 0 #oMouth_n_piece  * magnification_1
                jDrop   = 0 #jDrop_n_piece   * magnification_1

            elif num_03 == 2: # 90%
                iBrow   = iBrow_n_piece   * magnification_2
                oBrow   = oBrow_n_piece   * magnification_2
                uLid    = uLid_n_piece    * magnification_2
                lLid    = lLid_n_piece    * magnification_2
                cheek   = cheek_n_piece   * magnification_2
                nWrink  = 0 #nWrink_n_piece  * magnification_2
                uLip    = 0 #uLip_n_piece    * magnification_2
                lCorner = lCorner_n_piece * magnification_2
                mCS     = mCS_n_piece     * magnification_2
                oMouth  = 0 #oMouth_n_piece  * magnification_2
                jDrop   = 0 #jDrop_n_piece   * magnification_2

        # POSITIVE
        elif num_02 == 2:
            if num_03 == 1: # 60%
                iBrow   = iBrow_p_piece   * magnification_1
                oBrow   = oBrow_p_piece   * magnification_1
                uLid    = uLid_p_piece    * magnification_1
                lLid    = lLid_p_piece    * magnification_1
                cheek   = cheek_p_piece   * magnification_1
                nWrink  = 0 #nWrink_p_piece  * magnification_1
                uLip    = 0 #uLip_p_piece    * magnification_1
                lCorner = lCorner_p_piece * magnification_1
                mCS     = mCS_p_piece     * magnification_1
                oMouth  = 0 #oMouth_p_piece  * magnification_1
                jDrop   = 0 #jDrop_p_piece   * magnification_1

            elif num_03 == 2: # 90%
                iBrow   = iBrow_p_piece   * magnification_2
                oBrow   = oBrow_p_piece   * magnification_2
                uLid    = uLid_p_piece    * magnification_2
                lLid    = lLid_p_piece    * magnification_2
                cheek   = cheek_p_piece   * magnification_2
                nWrink  = 0 #nWrink_p_piece  * magnification_2
                uLip    = 0 #uLip_p_piece    * magnification_2
                lCorner = lCorner_p_piece * magnification_2
                mCS     = mCS_p_piece     * magnification_2
                oMouth  = 0 #oMouth_p_piece  * magnification_2
                jDrop   = 0 #jDrop_p_piece   * magnification_2

        cmd = "facs InnerBrow "           + str(iBrow)   + \
                  " Outerbrow "           + str(oBrow)   + \
                  " UpperLid "            + str(uLid)    + \
                  " LowerLid "            + str(lLid)    + \
                  " Cheek "               + str(cheek)   + \
                  " NoseWrinkler "        + str(0)       + \
                  " UpperLip "            + str(0)       + \
                  " LipCorner "           + str(lCorner) + \
                  " MouthCornerStickout " + str(mCS)     + \
                  " MouthOpen "           + str(0)       + \
                  " JawDrop "             + str(0)       + "\n"
        time.sleep(2)

        client2.send(cmd.encode("utf-8"))
        time.sleep(0.5)
    CodeComponent start_pose_san
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
    CodeComponent san
      Code Type = Py
      Before Experiment:
        json_data_san = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "さん",
            "Volume": Master_Volume,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
      Begin Routine:
        json_string = json.dumps(json_data_san)
        message = roslibpy.Message({'data': json_string})
        time.sleep(1)

        tts_topic.publish(message)
        time.sleep(1)
    CodeComponent emo_3
      Code Type = Py
      Begin Routine:
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    CodeComponent start_pose_end
      Code Type = Py
      Begin Routine:
        client2.send(facs_cmd1.encode("utf-8"))
        time.sleep(1)

        client1.send(head_cmd1_1.encode("utf-8"))
        time.sleep(2)
  Routine Check
    TextComponent text_4
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nikolaの表出した表情の中で最も近い番号をキーボードの１～３で選択してください。
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Start_Countdown
    TextComponent count_sc
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine Finish
    TextComponent shuryo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 実験を終了します。
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    MouseComponent routine_end_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Test_Eyecatch
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
      Begin Routine:
        text_2.setText(trialCounter)
        trialCounter = trialCounter + 1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Eyecatch
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 準備しています．．．
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Flow
  Routine Init
  Routine Explanation
  Routine Eyecatch
  Routine Idleoff
  Routine Start_Countdown
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = xlsx/ResumeRepMom .xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'method': 1, 'expression': 1, 'level_': 1},
      {'method': 1, 'expression': 1, 'level_': 2},
      {'method': 1, 'expression': 2, 'level_': 1},
      {'method': 1, 'expression': 2, 'level_': 2},
      {'method': 2, 'expression': 1, 'level_': 1},
      {'method': 2, 'expression': 1, 'level_': 2},
      {'method': 2, 'expression': 2, 'level_': 1},
      {'method': 2, 'expression': 2, 'level_': 2}]
    Routine Test_Eyecatch
    Routine Test_init
    Routine Test_stim
    Routine Test_fin
    Routine Emo
    Routine Test_fin
    Routine Check
  LoopTerminator trials_2
  Routine Idleon
  Routine Finish
