PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = cedrustest
  keyboardBackend = ioHub
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Routines
  Routine routine_1
    TextComponent text
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ボタン入力された値を表示します。
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    cedrusButtonBoxComponent buttonBox
      allowedKeys = 1,3
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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Flow
  Routine routine_1
