PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3072, 1728]
  expName = Resume Gaze
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        実験を行います。
        最初に動作テストを各種行います。
        左右のLEDランプ、もしくは、スピーカが動作するので、
        どちら側が動作したかキーボードの左シフトと右シフトボタンで
        教えてください。
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent undelete
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','right'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        displayText=''
        text_=''
      Each Frame:
        keys = key_resp.getKeys()
        if keys:
            displayText = keys[-1].name
            if displayText == 'left' or displayText == 'lshift':
                text_ = 'L'
            elif displayText == 'right' or displayText == 'rshift':
                text_ = 'R'
            else:
                text_ = "ミスです。左シフトか右シフトボタンを押してください。"
            undelete.setText(text_)
    TextComponent text_10
      letterHeight = 0.02
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 3
      text = マウスの左クリックを押して実験を始めます。
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  Routine routine_1
    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every frame] = $str(300-int(t))
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 300.0
      text = マウスを左クリックして開始します。
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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  Routine finish
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 終了します
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ledbeepcheck
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = LEDとブザーの動作チェックを実施しています。
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    CodeComponent ledbeepcheck_2
      Code Type = Py
      Before Experiment:
        import serial
        import time

        ser = serial.Serial("COM3", 9600)
      Begin Routine:
        ser.write(b"1")
        time.sleep(1)

        ser.write(b"2")
        time.sleep(1)

        ser.write(b"3")
        time.sleep(1)

        ser.write(b"4")
        time.sleep(1)
      End Experiment:
        ser.close()
  Routine counter
    CodeComponent break_counter
      Code Type = Py
      Begin Experiment:
        trialCounter = 1
        nRestTrial = 17 # 17回目で休憩をはさむ
      Begin Routine:
        if trialCounter % nRestTrial == 0:
            isRest = 1
        else:
            isRest = 0

        text_2.setText(trialCounter)
        trialCounter = trialCounter + 1
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine start_countdown
    TextComponent text_countdown_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine check
    KeyboardComponent key_resp_2
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
    CodeComponent stop_idlebe
      Code Type = Py
      disabled = True
      Before Experiment:
        # Stop idle behavior
        import roslibpy
        import json
        import time
      Begin Experiment:
        # Connection to ROS bridge server
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run()
      Begin Routine:
        # Define JSON data
        json_data = {
            "completely_off": True
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)
      End Experiment:
        # Terminate connection
        client.terminate()
    CodeComponent Init_pose
      Code Type = Py
      disabled = True
      Before Experiment:
        import socket
        import time
      Begin Experiment:
        # 変数設定
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
      Begin Routine:
        # サーバとの接続
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client1.send(cmd1.encode("utf-8"))

        # facs -1~1
        cmd2 = "facs InnerBrow 0 Outerbrow 0 UpperLid -1 LowerLid -1 Cheek 0 NoseWrinkler 0 UpperLip 0 LipCorner 0 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n"
        client2.send(cmd2.encode("utf-8"))

        time.sleep(0.5)
      End Experiment:
        client1.close()
        client2.close()
    CodeComponent ikimasu
      Code Type = Py
      disabled = True
      Begin Routine:
        # Connection to ROS bridge server
        #client = roslibpy.Ros(host="nikola-master.local", port=9099)
        #client.run()

        # Define JSON data
        json_data = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "いきます。",
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 0.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }

        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        #time.sleep(1)
        topic.publish(message)
        #time.sleep(1)
    CodeComponent stim
      Code Type = Py
      disabled = True
      Before Experiment:
        import socket
        import threading

        # 変数設定
        HOST = "nikola-control.ad180.riken.go.jp"
        PORT1 = 21000
        PORT2 = 20000
        BUFSIZE = 4096
      Begin Routine:
        # ソケットの作成
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client1.connect((HOST, PORT1))
        #client2.connect((HOST, PORT2))

        headcmd = ["HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":0.2}\n", \
                    "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":1.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":0.2}\n", \
                    "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":-1.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":0.2}\n"]
        eyecmd = ["EyeController={\"id\":\"EyeController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":0.2}\n", \
                    "EyeController={\"id\":\"EyeController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":1.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":0.2}\n", \
                    "EyeController={\"id\":\"EyeController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":-1.0,\"y\":1.2,\"z\":1.5},\"translateSpeed\":0.2}\n"]

        num_01 = modality
        num_02 = modality_lr
        num_03 = movepoint
        num_04 = movepoint_lr

        def stim_():
            if num_01 == 1:
                if num_02 == 1:
                    ser.write(b"1")
                elif num_02 == 2:
                    ser.write(b"2")
            elif num_01 == 2:
                if num_02 == 1:
                    ser.write(b"3")
                elif num_02 == 2:
                    ser.write(b"4")

        def nikola_head():
            if num_03 == 1:
                if num_04 == 1:
                    cmd1 = headcmd[1]
                    #cmd2 = eyecmd[0]
                if num_04 == 2:
                    cmd1 = headcmd[2]
                    #cmd2 = eyecmd[0]
            if num_03 == 2:
                if num_04 == 2:
                    cmd1 = headcmd[0]
                    #cmd2 = eyecmd[1]
                if num_04 == 2:
                    cmd1 = headcmd[0]
                    #cmd2 = eyecmd[2]
            # サーバへコマンドを送信する
            client1.send(cmd1.encode("utf-8"))
            #client1.send(cmd2.encode("utf-8"))

        def nikola_eye():
            if num_03 == 1:
                if num_04 == 1:
                    #cmd1 = headcmd[1]
                    cmd2 = eyecmd[0]
                if num_04 == 2:
                    #cmd1 = headcmd[2]
                    cmd2 = eyecmd[0]
            if num_03 == 2:
                if num_04 == 2:
                    #cmd1 = headcmd[0]
                    cmd2 = eyecmd[1]
                if num_04 == 2:
                    #cmd1 = headcmd[0]
                    cmd2 = eyecmd[2]
            # サーバへコマンドを送信する
            #client1.send(cmd1.encode("utf-8"))
            client1.send(cmd2.encode("utf-8"))

        def wait_():
            time.sleep(2.2)

        # スレッドを作成
        thread1 = threading.Thread(target=stim_)
        thread2 = threading.Thread(target=nikola_head)
        thread3 = threading.Thread(target=nikola_eye)
        thread4 = threading.Thread(target=wait_)

        # thread1を開始
        thread1.start()
        thread4.start()

        # 0.3秒 (300ms) 休止
        time.sleep(0.3)

        # thread2を開始
        thread2.start()
        thread3.start()

        # スレッドが終了するのを待つ
        thread1.join()
        thread2.join()
        thread3.join()
        thread4.join()
      End Routine:
        #client1.close()
        #client2.close()
    CodeComponent Init_pose_2
      Code Type = Py
      disabled = True
      Begin Routine:
        # ソケットの作成
        client1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        client2 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client1.connect((HOST, PORT1))
        client2.connect((HOST, PORT2))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client1.send(cmd1.encode("utf-8"))

        # facs -1~1
        cmd2 = "facs InnerBrow 0 Outerbrow 0 UpperLid -1 LowerLid -1 Cheek 0 NoseWrinkler 0 UpperLip 0 LipCorner 0 MouthCornerStickout 0 MouthOpen 0 JawDrop 0\n"
        client2.send(cmd2.encode("utf-8"))

        time.sleep(0.5)
    CodeComponent start_idlebe
      Code Type = Py
      disabled = True
      Begin Routine:
        # Connection to ROS bridge server
        #client = roslibpy.Ros(host="nikola-master.local", port=9099)
        #client.run()

        # Define JSON data
        json_data = {
            "completely_off": False
        }
        json_string = json.dumps(json_data)

        # Define topic and message types
        topic = roslibpy.Topic(client, '/do_idle_behavior', 'std_msgs/String')

        # Send messages
        message = roslibpy.Message({'data': json_string})
        # time.sleep(1)
        topic.publish(message)
        # time.sleep(1)
      End Experiment:
        #client.terminate()
    CodeComponent sample
      Code Type = Py
      disabled = True
      Begin Routine:
        num_01 = modality
        num_02 = modality_lr
        num_03 = movepoint
        num_04 = movepoint_lr

        if num_01 == 1:
            if num_02 == 1:
                ser.write(b"1")
            elif num_02 == 2:
                ser.write(b"2")
        elif num_01 == 2:
            if num_02 == 1:
                ser.write(b"3")
            elif num_02 == 2:
                ser.write(b"4")
Flow
  Routine ledbeepcheck
  Routine trial
  Routine start_countdown
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ResumeGaze.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'modality': 1, 'modality_lr': 1, 'movepoint': 1, 'movepoint_lr': 1},
      {'modality': 1, 'modality_lr': 1, 'movepoint': 1, 'movepoint_lr': 2},
      {'modality': 1, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 1, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 2},
      {'modality': 1, 'modality_lr': 2, 'movepoint': 1, 'movepoint_lr': 1},
      {'modality': 1, 'modality_lr': 2, 'movepoint': 1, 'movepoint_lr': 2},
      {'modality': 1, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 1, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 1, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 1, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 1, 'movepoint': 2, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 1, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 1, 'movepoint_lr': 2},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 1},
      {'modality': 2, 'modality_lr': 2, 'movepoint': 2, 'movepoint_lr': 2}]
    Routine counter
    LoopInitiator break_ loopType="TrialHandler"
      loopType = random
      nReps = isRest
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      Routine routine_1
    LoopTerminator break_
    Routine test
    Routine check
  LoopTerminator trials
  Routine finish
