PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [960, 540]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine 例示
    TextComponent start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = スタート
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    CodeComponent V1_A1
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence 1.0\n arousal 1.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        #cmd2 = "expression MoodBasedFACS\n"
        #client.send(cmd2.encode("utf-8"))

        #client.close()
      End Routine:
        # _*_ coding: utf-8 _*_

        import socket
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence 0.0\n arousal 0.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        #cmd2 = "expression MoodBasedFACS\n"
        #client.send(cmd2.encode("utf-8"))

        client.close()
    CodeComponent T_Hello_N
      Code Type = Py
      Begin Routine:
        import roslibpy
        import json
        import time

        # ROSブリッジサーバへの接続を確立
        #client = roslibpy.Ros(host="nikola-control.ad180.riken.go.jp", port=34797)
        client = roslibpy.Ros(host="nikola-master.local", port=9099)
        client.run()

        # JSONデータを定義
        json_data = {
            "Command": "ttsPlaywithParam",
            "TtsID": 1023,
            "Text": "こんにちは。",
            "Volume": 0.8,
            "Rate": 1.0,
            "Pitch": 1.0,
            "Emphasis": 1.0,
            "Emotion":
            {
                "Joy": 1.0,
                "Angry": 0.0,
                "Sad": 0.0
            }
        }
        json_string = json.dumps(json_data)

        # メッセージの型とトピックを定義
        topic = roslibpy.Topic(client, '/tts', 'std_msgs/String')

        # メッセージを送信
        message = roslibpy.Message({'data': json_string})
        time.sleep(1)
        topic.publish(message)
        time.sleep(1)

        # 接続を終了
        client.terminate()
    CodeComponent face_forward
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        import time
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp"
        PORT = 21000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client.send(cmd1.encode("utf-8"))

        time.sleep(1)

        # _*_ coding: utf-8 _*_

        import socket
        import time
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp"
        PORT = 21000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.close()
  Routine ready
    TextComponent confirmation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 実験を開始します。
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 1.0
      text = 進んでよければ、マウスをクリックしてください
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  Routine steady
    TextComponent countdown_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ③
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    TextComponent countdown_2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = ②
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    TextComponent cowntdown_1
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = ①
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    CodeComponent face_down
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        import time
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp"
        PORT = 21000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client.send(cmd1.encode("utf-8"))

        time.sleep(1)

        # _*_ coding: utf-8 _*_

        import socket
        import time
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp"
        PORT = 21000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":-0.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.close()
  Routine check
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        ValenceとArousalの値を設定してください。

        設定が完了したらFinishボタンを押してください。
    SliderComponent valence_check
      fillColor = -0.2157, 0.1686, 0.8588
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.03
      pos = (0.3, 0)
      saveStartStop = False
      size = (0.8, 0.04)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent velence_check
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Valence
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    SliderComponent arowsal_check
      fillColor = -0.2157, 0.1686, 0.8588
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.03
      pos = (0.3, -0.2)
      saveStartStop = False
      size = (0.8, 0.04)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent arosal_check
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = Arousal
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    ButtonComponent button
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.01
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.06)
      startVal [time (s)] = 1
      text = Finish
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    CodeComponent code
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence 0.0\n arousal 0.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        cmd2 = "expression MoodBasedFACS\n"
        #client.send(cmd2.encode("utf-8"))

        client.close()
  Routine Finish
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        お疲れさまでした。

        以上で実験を終わります。

        ※20秒後に自動的に画面を閉じます。
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 5.0
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  Routine routine_1
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine routine_2
  Routine routine
  Routine 説明1
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        これから、プロソディーの実験を行います。

        まずは概要を説明します。
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 1.0
      text = 進んでよければ、マウスをクリックしてください
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  Routine 説明2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        実験の概要

        目の前のアンドロイド「Nikola」があなたに挨拶をします。
        その時のあなたの感情を以下の指標で評価して下さい。

        Valence（感情）／Arousal（強さ）
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 1.0
      text = 進んでよければ、マウスをクリックしてください
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  Routine 説明3
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        まずは、仮実験を行います。

        わからない点があれば、お声がけください。
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 1.0
      text = 進んでよければ、マウスをクリックしてください
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  Routine 説明4
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = それではこれから本番です。
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    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 1.0
      text = 進んでよければ、マウスをクリックしてください
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  Routine V1A1
    TextComponent start_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = スタート
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    CodeComponent V1_A1_2
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence 1.0\n arousal 1.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        client.close()
      End Routine:
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence 0.0\n arousal 0.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        client.close()
    CodeComponent T_Hello_J
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import time
        from roslibpy import Message, Ros, Topic

        # Nikolaサーバへ接続
        ros_client = Ros('nikola-master.ad174.riken.go.jp', 9090)

        # Publishするtopic
        publisher = Topic(ros_client, '/tts', 'std_msgs/String')

        if not ros_client.is_connected:
            publisher.publish(Message({
                "Command": "ttsPlaywithParam",
                "TtsID": 1023,
                "Text": "こんにちは。",
                "Volume": 2,
                "Rate": 1.0,
                "Pitch": 1.2,
                "Emphasis": 1.0,
                "Emotion":
                {
                    "Joy": 1.0,
                    "Angry": 0.0,
                    "Sad": 0.0
                }
            }))
    CodeComponent face_forward_3
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        import time
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp"
        PORT = 21000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.close()
  Routine Vmiuns1A1_2
    TextComponent start_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = スタート
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    CodeComponent V_1_A1
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence -1.0\n arousal 1.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        client.close()
      End Routine:
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence 0.0\n arousal 0.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        client.close()
    CodeComponent T_Hello_A
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import time
        from roslibpy import Message, Ros, Topic

        # Nikolaサーバへ接続
        ros_client = Ros('nikola-master.ad174.riken.go.jp', 9090)

        # Publishするtopic
        publisher = Topic(ros_client, '/tts', 'std_msgs/String')

        if not ros_client.is_connected:
            publisher.publish(Message({
                "Command": "ttsPlaywithParam",
                "TtsID": 1023,
                "Text": "こんにちは。",
                "Volume": 2,
                "Rate": 1.0,
                "Pitch": 1.2,
                "Emphasis": 1.0,
                "Emotion":
                {
                    "Joy": 0.0,
                    "Angry": 1.0,
                    "Sad": 0.0
                }
            }))
    CodeComponent face_forward_2
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        import time
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp"
        PORT = 21000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "HeadController={\"id\":\"HeadController\",\"motionTowardObject\":\"\",\"targetMotionMode\":2,\"targetPoint\":{\"x\":0.0,\"y\":1.2,\"z\":2.5},\"translateSpeed\":2.0}\n"
        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.send(cmd1.encode("utf-8"))
        time.sleep(1)

        client.close()
  Routine Vminus1Aminus1
    TextComponent start_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = スタート
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    CodeComponent Vminus1_Aminus1
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import socket
        #import sys

        # 変数設定
        HOST = "nikola-control.ad174.riken.go.jp" #"172.27.174.6"
        PORT = 20000
        BUFSIZE = 4096

        # ソケットの作成
        client = socket.socket(socket.AF_INET, socket.SOCK_STREAM)

        # サーバとの接続
        client.connect((HOST, PORT))

        # サーバへコマンドを送信する
        cmd1 = "valence -1.0\n arousal -1.0\n dominance 1\n realintention 1\n"
        client.send(cmd1.encode("utf-8"))

        client.close()
      End Routine:
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    CodeComponent T_Hello_S
      Code Type = Py
      disabled = True
      Begin Routine:
        # _*_ coding: utf-8 _*_

        import time
        from roslibpy import Message, Ros, Topic

        # Nikolaサーバへ接続
        ros_client = Ros('nikola-master.ad174.riken.go.jp', 9090)

        # Publishするtopic
        publisher = Topic(ros_client, '/tts', 'std_msgs/String')

        if not ros_client.is_connected:
            publisher.publish(Message({
                "Command": "ttsPlaywithParam",
                "TtsID": 1023,
                "Text": "こんにちは。",
                "Volume": 2,
                "Rate": 1.0,
                "Pitch": 1.2,
                "Emphasis": 1.0,
                "Emotion":
                {
                    "Joy": 0.0,
                    "Angry": 0.0,
                    "Sad": 1.0
                }
            }))
    CodeComponent face_forward_4
      Code Type = Py
      disabled = True
      Begin Routine:
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Flow
  Routine 説明1
  Routine 説明2
  Routine 説明3
  Routine ready
  Routine steady
  Routine 例示
  Routine check
  Routine 説明4
  Routine ready
  Routine steady
  Routine Vmiuns1A1_2
  Routine check
  Routine ready
  Routine steady
  Routine V1A1
  Routine check
  Routine ready
  Routine steady
  Routine Vminus1Aminus1
  Routine check
  Routine Finish
