<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2022.2.5">
  <Settings>
    <Param val="use prefs" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="use prefs" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="{'participant':'f&quot;{randint(0, 999999):06.0f}&quot;', 'session':'001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="True" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="(1024, 768)" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="untitled" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="exp" valType="code" updates="None" name="logging level"/>
    <Param val="MIDDLE_BUTTON" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <TextComponent name="text_4">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.02" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text_4" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0.15)" valType="list" updates="constant" name="pos"/>
        <Param val="False" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="感情価の値を1~9のボタンで評価してください。" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <KeyboardComponent name="key">
        <Param val="'1', '2','3','4','5','6','7','8','9','q'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="False" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key" valType="code" updates="None" name="name"/>
        <Param val="False" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="False" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <MouseComponent name="mouse">
        <Param val="" valType="list" updates="constant" name="clickable"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="any click" valType="str" updates="constant" name="forceEndRoutineOnPress"/>
        <Param val="mouse" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="constant" name="newClicksOnly"/>
        <Param val="on click" valType="str" updates="None" name="saveMouseState"/>
        <Param val="name," valType="list" updates="constant" name="saveParamsClickable"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="mouse onset" valType="str" updates="constant" name="timeRelativeTo"/>
      </MouseComponent>
      <KeyboardComponent name="key_resp">
        <Param val="'return'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <CodeComponent name="code">
        <Param val="" valType="extendedCode" updates="constant" name="Before Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Before JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Routine"/>
        <Param val="displayText=''&amp;#10;text_=''&amp;#10;flag=0&amp;#10;" valType="extendedCode" updates="constant" name="Begin Routine"/>
        <Param val="Py" valType="str" updates="None" name="Code Type"/>
        <Param val="keys = key.getKeys()&amp;#10;if keys:&amp;#10;    print(keys)&amp;#10;    displayText = keys[-1].name&amp;#10;    if displayText=='1':&amp;#10;        text_='1'&amp;#10;        #flag=1&amp;#10;    else:&amp;#10;        text_ = &quot;ミスです。1~9の数字を入力してください。&quot;&amp;#10;        #flag=0&amp;#10;    inputnum.setText(displayText)" valType="extendedCode" updates="constant" name="Each Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each JS Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Routine"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Routine"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="code" valType="code" updates="None" name="name"/>
      </CodeComponent>
      <TextComponent name="inputnum">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="inputnum" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="False" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
    </Routine>
    <Routine name="routine_1">
      <TextComponent name="text">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="5.0" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="表示するテキスト&amp;#10;&amp;#10;改行もできます" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="routine_1"/>
    <Routine name="trial"/>
  </Flow>
</PsychoPy2experiment>
